def model Main as
  def unit UnitP as
    unit pascal {mult: 133};
  enddef;
  def unit UnitQ as
    unit UnitV;
    unit second {expo: -1};
  enddef;
  def unit UnitVel as
    unit UnitQ;
    unit meter {expo: -1, mult: 0.0001};
  enddef;
  def unit UnitR as
    unit UnitP;
    unit UnitQ {expo: -1};
  enddef;
  def unit UnitC as
    unit UnitP {expo: -1};
    unit UnitV;
  enddef;
  def unit UnitK as
    unit UnitP;
    unit UnitQ {expo: -2};
  enddef;
  def unit UnitKfo as
    unit UnitP;
    unit UnitQ {expo: -0.625};
  enddef;
  def unit UnitL as
    unit UnitP;
    unit UnitQ {expo: -1};
    unit second;
  enddef;
  def unit UnitV as
    unit litre {mult: 0.001};
  enddef;
  def unit UnitE as
    unit UnitC {expo: -1};
  enddef;
  def unit Unitl as
    unit meter {mult: 1e-06};
  enddef;
  def unit UnitA as
    unit meter {expo: 2, mult: 0.01};
  enddef;
  def unit Unitc as
    unit meter {expo: -1, mult: 0.01};
  enddef;
  def unit UnitT as
    unit UnitP;
    unit meter {mult: 0.01};
  enddef;
  def unit Unitv as
    unit Unitl;
    unit second {expo: -1};
  enddef;
  def unit UnitKxi as
    unit UnitP {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit UnitLparam as
    unit UnitL;
    unit UnitA;
  enddef;
  def unit UnitB as
    unit UnitP;
    unit UnitQ {expo: -2};
    unit second {expo: 2};
  enddef;
  def unit UnitBparam as
    unit UnitB;
    unit UnitA;
  enddef;
  def unit ode_s as
    unit second {expo: -1};
  enddef;

  def comp environment as
    var t: second {pub: out};
  enddef;

  def comp LA as
    var L: dimensionless;
    var Ls: Unitl;
    var Lsref: Unitl {pub: in};
    var Lsc: Unitl {init: 2., pub: out};
    var Lscini: Unitl {pub: in};
    var Lsnorm: dimensionless;
    var ta: second;
    var tact: second;
    var td: second;
    var trise: second;
    var p_tact: second {pub: in};
    var p_trise: dimensionless {pub: in};
    var p_td: dimensionless {pub: in};
    var C: dimensionless {init: 0.0, pub: out};
    var C0: dimensionless {pub: in};
    var Vcav: UnitV {init: 23.5, pub: out};
    var Vcav0: UnitV {pub: in};
    var Vwall: UnitV {pub: in};
    var sfpas: UnitP;
    var sfact: UnitP;
    var sfrest: UnitP;
    var sf: UnitP;
    var spas: UnitP {pub: in};
    var sact: UnitP {pub: in};
    var vmax: Unitv {pub: in};
    var delay: second {pub: in};
    var Time: second;
    var Time2: second;
    var xrise: dimensionless;
    var fRise: dimensionless;
    var fDecay: dimensionless;
    var Crest: dimensionless {pub: in};
    var xPos: dimensionless;
    var xSarc: dimensionless;
    var y: dimensionless;
    var NoBuckle: dimensionless;
    var Vm: UnitV;
    var Cm: Unitc;
    var Am: UnitA;
    var Amtotal: UnitA;
    var Amdead: UnitA {pub: in};
    var Amref: UnitA {pub: in};
    var z: dimensionless {pub: out};
    var Ef: dimensionless;
    var kS: dimensionless {pub: in};
    var Tension: UnitT;
    var Pi: UnitP {pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {init: 0., pub: out};
    var Q0: UnitQ {pub: in};
    var T: second {pub: in};
    var t: second {pub: in};
    var Kvo: UnitKxi {pub: in};
    var Kvc_p: UnitKxi {pub: in};
    var Kvc_n: UnitKxi {pub: in};
    var Linductance: UnitL;
    var L_min: UnitL {pub: in};
    var L_param: UnitLparam {pub: in};
    var xi: dimensionless {init: 1.0};
    var Aeff: UnitA;
    var Aann: UnitA {pub: in};
    var B: UnitB;
    var val_xi: ode_s;
    var B_param: UnitBparam {pub: in};
    tact = p_tact;
    td = p_td*tact;
    trise = p_trise*tact;
    ta = tact*(0.65{dimensionless}+0.7{dimensionless}*L);
    Time = (t-delay-T*floor((t-delay)/T))/trise;
    xrise = min(8{dimensionless}, max(Time, 0{dimensionless}));
    fRise = tanh(4.0{dimensionless}*sqr(L))*pow(xrise, 3{dimensionless})*exp(-xrise)*sqr(8{dimensionless}-xrise)*0.020{dimensionless}/trise;
    Time2 = (t-delay-T*floor((t-delay)/T)-ta)/td;
    fDecay = (0.5{dimensionless}+0.5{dimensionless}*sin(Time2/abs(Time2)*min(pi/2{dimensionless}, abs(Time2))))/td;
    ode(C, t) = fRise-C*fDecay;
    sfact = sact*C*L;
    sfrest = sact*Crest*L;
    xPos = max(kS*ln(Ls/1.8{Unitl}), 0{dimensionless});
    xSarc = ln(Ls/Lsref)+0.1{dimensionless};
    y = 0.12{dimensionless}*(cosh(5{dimensionless}*xPos)-1{dimensionless})+xSarc;
    sfpas = spas*y;
    NoBuckle = tanh(10{dimensionless}*C+max(0{dimensionless}, 1e-4{dimensionless}*sqr(sfpas)));
    sf = max(0.2{dimensionless}*sfpas, sfpas)+(sfact+sfrest)*Lsnorm-sfrest;
    Ls = exp(Ef)*Lsref;
    L = max((Lsc-1.51{Unitl})/1{Unitl}, 0.0001{dimensionless});
    Lsnorm = max((Ls-Lsc)/0.04{Unitl}, -0.02{dimensionless});
    ode(Lsc, t) = max(Lsnorm-1{dimensionless}, NoBuckle*(Lsnorm-1{dimensionless}))*vmax*0.85{second}/T;
    Vm = Vcav+0.5{dimensionless}*Vwall;
    Cm = pow(4{dimensionless}*pi/(3{dimensionless}*Vm), 1{dimensionless}/3{dimensionless});
    Amtotal = 4{dimensionless}*pi/sqr(Cm);
    Am = Amtotal-Amdead;
    z = 1.5{dimensionless}*Vwall*Cm/Am;
    Ef = 0.5{dimensionless}*ln(Am/Amref)-sqr(z)/12{dimensionless}-0.019{dimensionless}*pow(z, 4{dimensionless});
    Tension = sf*0.5{dimensionless}*(1{dimensionless}+0.27{dimensionless}*sqr(z))/Am*Vwall;
    Pi = 2{dimensionless}*Tension*Cm;
    ode(Vcav, t) = Qi-Qo;
    ode(Qo, t) = (Pi-Po-B*Qo*abs(Qo))/Linductance;
    Linductance = L_param/Aeff+L_min;
    B = B_param/sqr(Aeff);
    Aeff = Aann*xi+0.0001{UnitA};
    ode(xi, t) = sel
      case Pi >= Po:
        (1{dimensionless}-xi)*Kvo*(Pi-Po);
      otherwise:
        val_xi;
    endsel;
    val_xi = sel
      case Qi >= Qo:
        xi*Kvc_p*(Pi-Po);
      otherwise:
        xi*Kvc_n*(Pi-Po);
    endsel;
  enddef;

  def comp RA as
    var L: dimensionless;
    var Ls: Unitl;
    var Lsref: Unitl {pub: in};
    var Lsc: Unitl {init: 2., pub: out};
    var Lscini: Unitl {pub: in};
    var Lsnorm: dimensionless;
    var ta: second;
    var tact: second;
    var td: second;
    var trise: second;
    var p_tact: second {pub: in};
    var p_trise: dimensionless {pub: in};
    var p_td: dimensionless {pub: in};
    var C: dimensionless {init: 0.0, pub: out};
    var C0: dimensionless {pub: in};
    var Vcav: UnitV {init: 23.5, pub: out};
    var Vcav0: UnitV {pub: in};
    var Vwall: UnitV {pub: in};
    var sfpas: UnitP;
    var sfact: UnitP;
    var sfrest: UnitP;
    var sf: UnitP;
    var spas: UnitP {pub: in};
    var sact: UnitP {pub: in};
    var vmax: Unitv {pub: in};
    var delay: second {pub: in};
    var Time: second;
    var Time2: second;
    var xrise: dimensionless;
    var fRise: dimensionless;
    var fDecay: dimensionless;
    var Crest: dimensionless {pub: in};
    var xPos: dimensionless;
    var xSarc: dimensionless;
    var y: dimensionless;
    var NoBuckle: dimensionless;
    var Vm: UnitV;
    var Cm: Unitc;
    var Am: UnitA;
    var Amtotal: UnitA;
    var Amdead: UnitA {pub: in};
    var Amref: UnitA {pub: in};
    var z: dimensionless {pub: out};
    var Ef: dimensionless;
    var kS: dimensionless {pub: in};
    var Tension: UnitT;
    var Pi: UnitP {pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {init: 0., pub: out};
    var Q0: UnitQ {pub: in};
    var T: second {pub: in};
    var t: second {pub: in};
    var Kvo: UnitKxi {pub: in};
    var Kvc_p: UnitKxi {pub: in};
    var Kvc_n: UnitKxi {pub: in};
    var Linductance: UnitL;
    var L_min: UnitL {pub: in};
    var L_param: UnitLparam {pub: in};
    var xi: dimensionless {init: 1.0};
    var Aeff: UnitA;
    var Aann: UnitA {pub: in};
    var B: UnitB;
    var val_xi: ode_s;
    var B_param: UnitBparam {pub: in};
    tact = p_tact;
    td = p_td*tact;
    trise = p_trise*tact;
    ta = tact*(0.65{dimensionless}+0.7{dimensionless}*L);
    Time = (t-delay-T*floor((t-delay)/T))/trise;
    xrise = min(8{dimensionless}, max(Time, 0{dimensionless}));
    fRise = tanh(4.0{dimensionless}*sqr(L))*pow(xrise, 3{dimensionless})*exp(-xrise)*sqr(8{dimensionless}-xrise)*0.020{dimensionless}/trise;
    Time2 = (t-delay-T*floor((t-delay)/T)-ta)/td;
    fDecay = (0.5{dimensionless}+0.5{dimensionless}*sin(Time2/abs(Time2)*min(pi/2{dimensionless}, abs(Time2))))/td;
    ode(C, t) = fRise-C*fDecay;
    sfact = sact*C*L;
    sfrest = sact*Crest*L;
    xPos = max(kS*ln(Ls/1.8{Unitl}), 0{dimensionless});
    xSarc = ln(Ls/Lsref)+0.1{dimensionless};
    y = 0.12{dimensionless}*(cosh(5{dimensionless}*xPos)-1{dimensionless})+xSarc;
    sfpas = spas*y;
    NoBuckle = tanh(10{dimensionless}*C+max(0{dimensionless}, 1e-4{dimensionless}*sqr(sfpas)));
    sf = max(0.2{dimensionless}*sfpas, sfpas)+(sfact+sfrest)*Lsnorm-sfrest;
    Ls = exp(Ef)*Lsref;
    L = max((Lsc-1.51{Unitl})/1{Unitl}, 0.0001{dimensionless});
    Lsnorm = max((Ls-Lsc)/0.04{Unitl}, -0.02{dimensionless});
    ode(Lsc, t) = max(Lsnorm-1{dimensionless}, NoBuckle*(Lsnorm-1{dimensionless}))*vmax*0.85{second}/T;
    Vm = Vcav+0.5{dimensionless}*Vwall;
    Cm = pow(4{dimensionless}*pi/(3{dimensionless}*Vm), 1{dimensionless}/3{dimensionless});
    Amtotal = 4{dimensionless}*pi/sqr(Cm);
    Am = Amtotal-Amdead;
    z = 1.5{dimensionless}*Vwall*Cm/Am;
    Ef = 0.5{dimensionless}*ln(Am/Amref)-sqr(z)/12{dimensionless}-0.019{dimensionless}*pow(z, 4{dimensionless});
    Tension = sf*0.5{dimensionless}*(1{dimensionless}+0.27{dimensionless}*sqr(z))/Am*Vwall;
    Pi = 2{dimensionless}*Tension*Cm;
    ode(Vcav, t) = Qi-Qo1-Qo2;
    ode(Qo1, t) = (Pi-Po1-B*Qo1*abs(Qo1))/Linductance;
    ode(Qo2, t) = (Pi-Po2-B*Qo2*abs(Qo2))/Linductance;
    Linductance = L_param/Aeff+L_min;
    B = B_param/sqr(Aeff);
    Aeff = Aann*xi+0.0001{UnitA};
    ode(xi, t) = sel
      case Pi >= Po1:
        (1{dimensionless}-xi)*Kvo*(Pi-Po1);
      otherwise:
        val_xi;
    endsel;
    val_xi = sel
      case Qi >= Qo1:
        xi*Kvc_p*(Pi-Po1);
      otherwise:
        xi*Kvc_n*(Pi-Po1);
    endsel;
  enddef;

  def comp RV as
    var L: dimensionless;
    var Ls: Unitl;
    var Lsref: Unitl {pub: in};
    var Lsc: Unitl {init: 2., pub: out};
    var Lscini: Unitl {pub: in};
    var Lsnorm: dimensionless;
    var ta: second;
    var tact: second;
    var td: second;
    var trise: second;
    var p_tact: second {pub: in};
    var p_trise: dimensionless {pub: in};
    var p_td: dimensionless {pub: in};
    var C: dimensionless {init: 0.0, pub: out};
    var C0: dimensionless {pub: in};
    var Vcav: UnitV {init: 23.5, pub: out};
    var Vcav0: UnitV {pub: in};
    var Vwall: UnitV {pub: in};
    var sfpas: UnitP;
    var sfact: UnitP;
    var sfrest: UnitP;
    var sf: UnitP;
    var spas: UnitP {pub: in};
    var sact: UnitP {pub: in};
    var vmax: Unitv {pub: in};
    var delay: second {pub: in};
    var Time: second;
    var Time2: second;
    var xrise: dimensionless;
    var fRise: dimensionless;
    var fDecay: dimensionless;
    var Crest: dimensionless {pub: in};
    var xPos: dimensionless;
    var xSarc: dimensionless;
    var y: dimensionless;
    var NoBuckle: dimensionless;
    var Vm: UnitV;
    var Cm: Unitc;
    var Am: UnitA;
    var Amtotal: UnitA;
    var Amdead: UnitA {pub: in};
    var Amref: UnitA {pub: in};
    var z: dimensionless {pub: out};
    var Ef: dimensionless;
    var kS: dimensionless {pub: in};
    var Tension: UnitT;
    var Pi: UnitP {pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {init: 0., pub: out};
    var Q0: UnitQ {pub: in};
    var T: second {pub: in};
    var t: second {pub: in};
    var Kvo: UnitKxi {pub: in};
    var Kvc_p: UnitKxi {pub: in};
    var Kvc_n: UnitKxi {pub: in};
    var Linductance: UnitL;
    var L_min: UnitL {pub: in};
    var L_param: UnitLparam {pub: in};
    var xi: dimensionless {init: 1.0};
    var Aeff: UnitA;
    var Aann: UnitA {pub: in};
    var B: UnitB;
    var val_xi: ode_s;
    var B_param: UnitBparam {pub: in};
    tact = p_tact;
    td = p_td*tact;
    trise = p_trise*tact;
    ta = tact*(0.65{dimensionless}+0.7{dimensionless}*L);
    Time = (t-delay-T*floor((t-delay)/T))/trise;
    xrise = min(8{dimensionless}, max(Time, 0{dimensionless}));
    fRise = tanh(4.0{dimensionless}*sqr(L))*pow(xrise, 3{dimensionless})*exp(-xrise)*sqr(8{dimensionless}-xrise)*0.020{dimensionless}/trise;
    Time2 = (t-delay-T*floor((t-delay)/T)-ta)/td;
    fDecay = (0.5{dimensionless}+0.5{dimensionless}*sin(Time2/abs(Time2)*min(pi/2{dimensionless}, abs(Time2))))/td;
    ode(C, t) = fRise-C*fDecay;
    sfact = sact*C*L;
    sfrest = sact*Crest*L;
    xPos = max(kS*ln(Ls/1.8{Unitl}), 0{dimensionless});
    xSarc = ln(Ls/Lsref)+0.1{dimensionless};
    y = 0.12{dimensionless}*(cosh(5{dimensionless}*xPos)-1{dimensionless})+xSarc;
    sfpas = spas*y;
    NoBuckle = tanh(10{dimensionless}*C+max(0{dimensionless}, 1e-4{dimensionless}*sqr(sfpas)));
    sf = max(0.2{dimensionless}*sfpas, sfpas)+(sfact+sfrest)*Lsnorm-sfrest;
    Ls = exp(Ef)*Lsref;
    L = max((Lsc-1.51{Unitl})/1{Unitl}, 0.0001{dimensionless});
    Lsnorm = max((Ls-Lsc)/0.04{Unitl}, -0.02{dimensionless});
    ode(Lsc, t) = max(Lsnorm-1{dimensionless}, NoBuckle*(Lsnorm-1{dimensionless}))*vmax*0.85{second}/T;
    Vm = Vcav+0.5{dimensionless}*Vwall;
    Cm = pow(4{dimensionless}*pi/(3{dimensionless}*Vm), 1{dimensionless}/3{dimensionless});
    Amtotal = 4{dimensionless}*pi/sqr(Cm);
    Am = Amtotal-Amdead;
    z = 1.5{dimensionless}*Vwall*Cm/Am;
    Ef = 0.5{dimensionless}*ln(Am/Amref)-sqr(z)/12{dimensionless}-0.019{dimensionless}*pow(z, 4{dimensionless});
    Tension = sf*0.5{dimensionless}*(1{dimensionless}+0.27{dimensionless}*sqr(z))/Am*Vwall;
    Pi = 2{dimensionless}*Tension*Cm;
    ode(Vcav, t) = Qi-Qo;
    ode(Qo, t) = (Pi-Po-B*Qo*abs(Qo))/Linductance;
    Linductance = L_param/Aeff+L_min;
    B = B_param/sqr(Aeff);
    Aeff = Aann*xi+0.0001{UnitA};
    ode(xi, t) = sel
      case Pi >= Po:
        (1{dimensionless}-xi)*Kvo*(Pi-Po);
      otherwise:
        val_xi;
    endsel;
    val_xi = sel
      case Qi >= Qo:
        xi*Kvc_p*(Pi-Po);
      otherwise:
        xi*Kvc_n*(Pi-Po);
    endsel;
  enddef;

  def comp LV as
    var L: dimensionless;
    var Ls: Unitl;
    var Lsref: Unitl {pub: in};
    var Lsc: Unitl {init: 2., pub: out};
    var Lscini: Unitl {pub: in};
    var Lsnorm: dimensionless;
    var ta: second;
    var tact: second;
    var td: second;
    var trise: second;
    var p_tact: second {pub: in};
    var p_trise: dimensionless {pub: in};
    var p_td: dimensionless {pub: in};
    var C: dimensionless {init: 0.0, pub: out};
    var C0: dimensionless {pub: in};
    var Vcav: UnitV {init: 23.5, pub: out};
    var Vcav0: UnitV {pub: in};
    var Vwall: UnitV {pub: in};
    var sfpas: UnitP;
    var sfact: UnitP;
    var sfrest: UnitP;
    var sf: UnitP;
    var spas: UnitP {pub: in};
    var sact: UnitP {pub: in};
    var vmax: Unitv {pub: in};
    var delay: second {pub: in};
    var Time: second;
    var Time2: second;
    var xrise: dimensionless;
    var fRise: dimensionless;
    var fDecay: dimensionless;
    var Crest: dimensionless {pub: in};
    var xPos: dimensionless;
    var xSarc: dimensionless;
    var y: dimensionless;
    var NoBuckle: dimensionless;
    var Vm: UnitV;
    var Cm: Unitc;
    var Am: UnitA;
    var Amtotal: UnitA;
    var Amdead: UnitA {pub: in};
    var Amref: UnitA {pub: in};
    var z: dimensionless {pub: out};
    var Ef: dimensionless;
    var kS: dimensionless {pub: in};
    var Tension: UnitT;
    var Pi: UnitP {pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {init: 0., pub: out};
    var Q0: UnitQ {pub: in};
    var T: second {pub: in};
    var t: second {pub: in};
    var Kvo: UnitKxi {pub: in};
    var Kvc_p: UnitKxi {pub: in};
    var Kvc_n: UnitKxi {pub: in};
    var Linductance: UnitL;
    var L_min: UnitL {pub: in};
    var L_param: UnitLparam {pub: in};
    var xi: dimensionless {init: 1.0};
    var Aeff: UnitA;
    var Aann: UnitA {pub: in};
    var B: UnitB;
    var val_xi: ode_s;
    var B_param: UnitBparam {pub: in};
    tact = p_tact;
    td = p_td*tact;
    trise = p_trise*tact;
    ta = tact*(0.65{dimensionless}+0.7{dimensionless}*L);
    Time = (t-delay-T*floor((t-delay)/T))/trise;
    xrise = min(8{dimensionless}, max(Time, 0{dimensionless}));
    fRise = tanh(4.0{dimensionless}*sqr(L))*pow(xrise, 3{dimensionless})*exp(-xrise)*sqr(8{dimensionless}-xrise)*0.020{dimensionless}/trise;
    Time2 = (t-delay-T*floor((t-delay)/T)-ta)/td;
    fDecay = (0.5{dimensionless}+0.5{dimensionless}*sin(Time2/abs(Time2)*min(pi/2{dimensionless}, abs(Time2))))/td;
    ode(C, t) = fRise-C*fDecay;
    sfact = sact*C*L;
    sfrest = sact*Crest*L;
    xPos = max(kS*ln(Ls/1.8{Unitl}), 0{dimensionless});
    xSarc = ln(Ls/Lsref)+0.1{dimensionless};
    y = 0.12{dimensionless}*(cosh(5{dimensionless}*xPos)-1{dimensionless})+xSarc;
    sfpas = spas*y;
    NoBuckle = tanh(10{dimensionless}*C+max(0{dimensionless}, 1e-4{dimensionless}*sqr(sfpas)));
    sf = max(0.2{dimensionless}*sfpas, sfpas)+(sfact+sfrest)*Lsnorm-sfrest;
    Ls = exp(Ef)*Lsref;
    L = max((Lsc-1.51{Unitl})/1{Unitl}, 0.0001{dimensionless});
    Lsnorm = max((Ls-Lsc)/0.04{Unitl}, -0.02{dimensionless});
    ode(Lsc, t) = max(Lsnorm-1{dimensionless}, NoBuckle*(Lsnorm-1{dimensionless}))*vmax*0.85{second}/T;
    Vm = Vcav+0.5{dimensionless}*Vwall;
    Cm = pow(4{dimensionless}*pi/(3{dimensionless}*Vm), 1{dimensionless}/3{dimensionless});
    Amtotal = 4{dimensionless}*pi/sqr(Cm);
    Am = Amtotal-Amdead;
    z = 1.5{dimensionless}*Vwall*Cm/Am;
    Ef = 0.5{dimensionless}*ln(Am/Amref)-sqr(z)/12{dimensionless}-0.019{dimensionless}*pow(z, 4{dimensionless});
    Tension = sf*0.5{dimensionless}*(1{dimensionless}+0.27{dimensionless}*sqr(z))/Am*Vwall;
    Pi = 2{dimensionless}*Tension*Cm;
    ode(Vcav, t) = Qi-Qo;
    ode(Qo, t) = (Pi-Po-B*Qo*abs(Qo))/Linductance;
    Linductance = L_param/Aeff+L_min;
    B = B_param/sqr(Aeff);
    Aeff = Aann*xi+0.0001{UnitA};
    ode(xi, t) = sel
      case Pi >= Po:
        (1{dimensionless}-xi)*Kvo*(Pi-Po);
      otherwise:
        val_xi;
    endsel;
    val_xi = sel
      case Qi >= Qo:
        xi*Kvc_p*(Pi-Po);
      otherwise:
        xi*Kvc_n*(Pi-Po);
    endsel;
  enddef;

  def comp AA_RCL as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qo: UnitQ {init: 0., pub: out};
    var Qi: UnitQ {pub: in};
    var V: UnitV {init: 0};
    var t: second {pub: in};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var L: UnitL {pub: in};
    var P0i: UnitP {pub: in};
    var Q0o: UnitQ {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    ode(Qo, t) = (Pi-Po-R*Qo)/L;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp AAA_RCL as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qo: UnitQ {init: 0., pub: out};
    var Qi: UnitQ {pub: in};
    var V: UnitV {init: 0};
    var t: second {pub: in};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var L: UnitL {pub: in};
    var P0i: UnitP {pub: in};
    var Q0o: UnitQ {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    ode(Qo, t) = (Pi-Po-R*Qo)/L;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp DAA_RCL as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qo: UnitQ {init: 0., pub: out};
    var Qi: UnitQ {pub: in};
    var V: UnitV {init: 0};
    var t: second {pub: in};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var L: UnitL {pub: in};
    var P0i: UnitP {pub: in};
    var Q0o: UnitQ {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    ode(Qo, t) = (Pi-Po-R*Qo)/L;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp PA_RCL as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qo: UnitQ {init: 0., pub: out};
    var Qi: UnitQ {pub: in};
    var V: UnitV {init: 0};
    var t: second {pub: in};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var L: UnitL {pub: in};
    var P0i: UnitP {pub: in};
    var Q0o: UnitQ {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    ode(Qo, t) = (Pi-Po-R*Qo)/L;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp LUNG_RCL as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qo: UnitQ {init: 0., pub: out};
    var Qi: UnitQ {pub: in};
    var V: UnitV {init: 0};
    var t: second {pub: in};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var L: UnitL {pub: in};
    var P0i: UnitP {pub: in};
    var Q0o: UnitQ {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    ode(Qo, t) = (Pi-Po-R*Qo)/L;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp SVC_RCL as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qo: UnitQ {init: 0., pub: out};
    var Qi: UnitQ {pub: in};
    var V: UnitV {init: 0};
    var t: second {pub: in};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var L: UnitL {pub: in};
    var P0i: UnitP {pub: in};
    var Q0o: UnitQ {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    ode(Qo, t) = (Pi-Po-R*Qo)/L;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp AO2_RCL as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qo: UnitQ {init: 0., pub: out};
    var Qi: UnitQ {pub: in};
    var V: UnitV {init: 0};
    var t: second {pub: in};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var L: UnitL {pub: in};
    var P0i: UnitP {pub: in};
    var Q0o: UnitQ {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    ode(Qo, t) = (Pi-Po-R*Qo)/L;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp UV_RCL as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qo: UnitQ {init: 0., pub: out};
    var Qi: UnitQ {pub: in};
    var V: UnitV {init: 0};
    var t: second {pub: in};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var L: UnitL {pub: in};
    var P0i: UnitP {pub: in};
    var Q0o: UnitQ {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    ode(Qo, t) = (Pi-Po-R*Qo)/L;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp IVC_RCL as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qo: UnitQ {init: 0., pub: out};
    var Qi: UnitQ {pub: in};
    var V: UnitV {init: 0};
    var t: second {pub: in};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var L: UnitL {pub: in};
    var P0i: UnitP {pub: in};
    var Q0o: UnitQ {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    ode(Qo, t) = (Pi-Po-R*Qo)/L;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp BrachT_RCL as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qo: UnitQ {init: 0., pub: out};
    var Qi: UnitQ {pub: in};
    var V: UnitV {init: 0};
    var t: second {pub: in};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var L: UnitL {pub: in};
    var P0i: UnitP {pub: in};
    var Q0o: UnitQ {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    ode(Qo, t) = (Pi-Po-R*Qo)/L;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp SubAR_RCL as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qo: UnitQ {init: 0., pub: out};
    var Qi: UnitQ {pub: in};
    var V: UnitV {init: 0};
    var t: second {pub: in};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var L: UnitL {pub: in};
    var P0i: UnitP {pub: in};
    var Q0o: UnitQ {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    ode(Qo, t) = (Pi-Po-R*Qo)/L;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp ICaroAR_RCL as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qo: UnitQ {init: 0., pub: out};
    var Qi: UnitQ {pub: in};
    var V: UnitV {init: 0};
    var t: second {pub: in};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var L: UnitL {pub: in};
    var P0i: UnitP {pub: in};
    var Q0o: UnitQ {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    ode(Qo, t) = (Pi-Po-R*Qo)/L;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp ICaroAL_RCL as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qo: UnitQ {init: 0., pub: out};
    var Qi: UnitQ {pub: in};
    var V: UnitV {init: 0};
    var t: second {pub: in};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var L: UnitL {pub: in};
    var P0i: UnitP {pub: in};
    var Q0o: UnitQ {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    ode(Qo, t) = (Pi-Po-R*Qo)/L;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp SubAL_RCL as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qo: UnitQ {init: 0., pub: out};
    var Qi: UnitQ {pub: in};
    var V: UnitV {init: 0};
    var t: second {pub: in};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var L: UnitL {pub: in};
    var P0i: UnitP {pub: in};
    var Q0o: UnitQ {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    ode(Qo, t) = (Pi-Po-R*Qo)/L;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp AI_RCL as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qo: UnitQ {init: 0., pub: out};
    var Qi: UnitQ {pub: in};
    var t: second {pub: in};
    var V: UnitV {init: 0};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var L: UnitL {pub: in};
    var P0i: UnitP {pub: in};
    var Q0o: UnitQ {pub: in};
    var Bhere: UnitK {pub: in};
    var Bprox: UnitK {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    ode(Qo, t) = (Pi-Po-R*Qo-(Bhere-Bprox)*Qo*abs(Qo))/L;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp LUNG_RC as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var V: UnitV {init: 0};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var t: second {pub: in};
    var P0i: UnitP {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    Qo = (Pi-Po)/R;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp AO1_RC as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var V: UnitV {init: 0};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var t: second {pub: in};
    var P0i: UnitP {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    Qo = (Pi-Po)/R;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp KID_RC as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var V: UnitV {init: 0};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var t: second {pub: in};
    var P0i: UnitP {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    Qo = (Pi-Po)/R;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp INTE_RC as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var V: UnitV {init: 0};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var t: second {pub: in};
    var P0i: UnitP {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    Qo = (Pi-Po)/R;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp LEG_RC as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var V: UnitV {init: 0};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var t: second {pub: in};
    var P0i: UnitP {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    Qo = (Pi-Po)/R;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp UA_RC as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var V: UnitV {init: 0};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var t: second {pub: in};
    var P0i: UnitP {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    Qo = (Pi-Po)/R;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp PLAC_RC_prox as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var V: UnitV {init: 0};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var t: second {pub: in};
    var P0i: UnitP {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    Qo = (Pi-Po)/R;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp PLAC_RC as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var V: UnitV {init: 0};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var t: second {pub: in};
    var P0i: UnitP {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    Qo = (Pi-Po)/R;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp HE_RC as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var V: UnitV {init: 0};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var t: second {pub: in};
    var P0i: UnitP {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    Qo = (Pi-Po)/R;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp UBR_RC as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var V: UnitV {init: 0};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var t: second {pub: in};
    var P0i: UnitP {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    Qo = (Pi-Po)/R;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp CCaroAR_RC as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var V: UnitV {init: 0};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var t: second {pub: in};
    var P0i: UnitP {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    Qo = (Pi-Po)/R;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp BRR_RC as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var V: UnitV {init: 0};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var t: second {pub: in};
    var P0i: UnitP {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    Qo = (Pi-Po)/R;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp CCaroAL_RC as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var V: UnitV {init: 0};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var t: second {pub: in};
    var P0i: UnitP {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    Qo = (Pi-Po)/R;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp BRL_RC as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var V: UnitV {init: 0};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var t: second {pub: in};
    var P0i: UnitP {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    Qo = (Pi-Po)/R;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp UBL_RC as
    var Pi: UnitP {init: 0., pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var V: UnitV {init: 0};
    var R: UnitR {pub: in};
    var C: UnitC {pub: in};
    var t: second {pub: in};
    var P0i: UnitP {pub: in};
    ode(Pi, t) = (Qi-Qo)/C;
    Qo = (Pi-Po)/R;
    ode(V, t) = Qi-Qo;
  enddef;

  def comp UBR_R as
    var Pi: UnitP {pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var R: UnitR {pub: in};
    Pi = Po+R*Qi;
    Qo = Qi;
  enddef;

  def comp BRR_R as
    var Pi: UnitP {pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var R: UnitR {pub: in};
    Pi = Po+R*Qi;
    Qo = Qi;
  enddef;

  def comp BRL_R as
    var Pi: UnitP {pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var R: UnitR {pub: in};
    Pi = Po+R*Qi;
    Qo = Qi;
  enddef;

  def comp UBL_R as
    var Pi: UnitP {pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var R: UnitR {pub: in};
    Pi = Po+R*Qi;
    Qo = Qi;
  enddef;

  def comp Coronary_R as
    var Pi: UnitP {pub: out};
    var Po: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var R: UnitR {pub: out};
    var R0: UnitR {pub: in};
    var k: dimensionless {pub: in};
    var n: dimensionless {pub: in};
    var Ps: UnitP {pub: in};
    var Pext: UnitP {pub: in};
    Pi = Po+R*Qi;
    Qo = Qi;
    R = R0+k/(1{dimensionless}+exp(-1{dimensionless}*(Pext-Ps)))*pow(Pext-Ps, n);
  enddef;

  def comp Bif_BrachTin_SubAR1out_CCaroAR2out as
    var Pi: UnitP {pub: out};
    var Po1: UnitP {pub: in};
    var Po2: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo1: UnitQ {pub: out};
    var Qo2: UnitQ {init: 0., pub: out};
    var R1: UnitR {pub: in};
    var R2: UnitR {pub: in};
    var t: second {pub: in};
    var L: UnitL {pub: in};
    var Q0o2: UnitQ {pub: in};
    ode(Qo2, t) = (Pi-Po2-R2*Qo2)/L;
    Pi = Po1+R1*Qo1;
    Qo1 = Qi-Qo2;
  enddef;

  def comp Bif_AAin_AAA1out_BrachT2out as
    var Pi: UnitP {pub: out};
    var Po1: UnitP {pub: in};
    var Po2: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo1: UnitQ {pub: out};
    var Qo2: UnitQ {init: 0., pub: out};
    var R1: UnitR {pub: in};
    var R2: UnitR {pub: in};
    var t: second {pub: in};
    var L: UnitL {pub: in};
    var Q0o2: UnitQ {pub: in};
    ode(Qo2, t) = (Pi-Po2-R2*Qo2)/L;
    Pi = Po1+R1*Qo1;
    Qo1 = Qi-Qo2;
  enddef;

  def comp Bif_AAAin_DAA1out_CCaroAL2out as
    var Pi: UnitP {pub: out};
    var Po1: UnitP {pub: in};
    var Po2: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo1: UnitQ {pub: out};
    var Qo2: UnitQ {init: 0., pub: out};
    var R1: UnitR {pub: in};
    var R2: UnitR {pub: in};
    var t: second {pub: in};
    var L: UnitL {pub: in};
    var Q0o2: UnitQ {pub: in};
    ode(Qo2, t) = (Pi-Po2-R2*Qo2)/L;
    Pi = Po1+R1*Qo1;
    Qo1 = Qi-Qo2;
  enddef;

  def comp Bif_DAAin_AI1out_SubAL2out as
    var Pi: UnitP {pub: out};
    var Po1: UnitP {pub: in};
    var Po2: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo1: UnitQ {pub: out};
    var Qo2: UnitQ {init: 0., pub: out};
    var R1: UnitR {pub: in};
    var R2: UnitR {pub: in};
    var t: second {pub: in};
    var L: UnitL {pub: in};
    var Q0o2: UnitQ {pub: in};
    ode(Qo2, t) = (Pi-Po2-R2*Qo2)/L;
    Pi = Po1+R1*Qo1;
    Qo1 = Qi-Qo2;
  enddef;

  def comp Bif_AOin_LEG1out_UA2out as
    var Pi: UnitP {pub: out};
    var Po1: UnitP {pub: in};
    var Po2: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo1: UnitQ {pub: out};
    var Qo2: UnitQ {init: 0., pub: out};
    var R1: UnitR {pub: in};
    var R2: UnitR {pub: in};
    var t: second {pub: in};
    var L: UnitL {pub: in};
    var Q0o2: UnitQ {pub: in};
    ode(Qo2, t) = (Pi-Po2-R2*Qo2)/L;
    Pi = Po1+R1*Qo1;
    Qo1 = Qi-Qo2;
  enddef;

  def comp Bif_LVin_AA1out_Coronary2out as
    var Pi: UnitP {pub: out};
    var Po1: UnitP {pub: in};
    var Po2: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo1: UnitQ {pub: out};
    var Qo2: UnitQ {init: 0., pub: out};
    var R1: UnitR {pub: in};
    var R2: UnitR {pub: in};
    var t: second {pub: in};
    var L: UnitL {pub: in};
    var Q0o2: UnitQ {pub: in};
    ode(Qo2, t) = (Pi-Po2-R2*Qo2)/L;
    Pi = Po1+R1*Qo1;
    Qo1 = Qi-Qo2;
  enddef;

  def comp Bif_PAin_LUNG1out_DA2out as
    var Pi: UnitP {pub: out};
    var Po1: UnitP {pub: in};
    var Po2: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo1: UnitQ {pub: out};
    var Qo2: UnitQ {init: 0., pub: out};
    var t: second {pub: in};
    var R2: UnitR {pub: in};
    var Bhere: UnitK {pub: in};
    var Bprox: UnitK {pub: in};
    var R1: UnitR {pub: in};
    var L: UnitL {pub: in};
    var Q0o: UnitQ {pub: in};
    ode(Qo2, t) = (Pi-Po2-R2*Qo2-(Bhere-Bprox)*Qo2*abs(Qo2))/L;
    Pi = Po1+R1*Qo1;
    Qo1 = Qi-Qo2;
  enddef;

  def comp Bif_UVin_DV1out_HE2out as
    var Pi: UnitP {pub: out};
    var Po1: UnitP {pub: in};
    var Po2: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo1: UnitQ {pub: out};
    var Qo2: UnitQ {init: 0., pub: out};
    var t: second {pub: in};
    var R2: UnitR {pub: in};
    var L: UnitL {pub: in};
    var Q0o2: UnitQ {pub: in};
    ode(Qo2, t) = (Pi-Po2-R2*Qo2)/L;
    Pi = Po1;
    Qo1 = Qi-Qo2;
  enddef;

  def comp Bif_IVCin_FO1out_RA2out as
    var Pi: UnitP {pub: out};
    var Po1: UnitP {pub: in};
    var Po2: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo1: UnitQ {pub: out};
    var Qo2: UnitQ {init: 0., pub: out};
    var t: second {pub: in};
    var R1: UnitR {pub: in};
    var R2: UnitR {pub: in};
    var L: UnitL {pub: in};
    var Q0o2: UnitQ {pub: in};
    ode(Qo2, t) = (Pi-Po2-R2*Qo2)/L;
    Pi = Po1+R1*Qo1;
    Qo1 = Qi-Qo2;
  enddef;

  def comp Bif_DVin_FO1out_RA2out as
    var Pi: UnitP {init: 0., pub: out};
    var Po1: UnitP {pub: in};
    var Po2: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo1: UnitQ {init: 0., pub: out};
    // var Qo2: UnitQ {pub: out};
    var Qo2: UnitQ {init: 0., pub: out};
    var v1: UnitVel {pub: out};
    var t: second {pub: in};
    var R1: UnitR {pub: in};
    var K1: UnitK {pub: in};
    var A1: UnitA {pub: in};
    var R2: UnitR {pub: in};
    var K2: UnitK {pub: in};
    var L: UnitL {pub: in};
    var Q0o1: UnitQ {pub: in};
    // ode(Qo1, t) = (Pi-Po1-R1*Qo1-K1*Qo1*abs(Qo1))/L;
    v1 = Qo1/(0.7{dimensionless}*A1);
    // Pi          = Po2+R2*Qo2+K2*Qo2*abs(Qo2);
    // Qo2         = Qi-Qo1;
    ode(Qo1, t) = (Pi-Po1-R1*Qo1-K1*Qo1*abs(Qo1))/L;
    ode(Qo2, t) = (Pi-Po2-R2*Qo2-K2*Qo2*abs(Qo2))/L;
    ode(Pi, t) = (Qi-Qo1-Qo2)/0.0005{UnitC};
  enddef;

  def comp Bif_AOin_AO1out_INTE2out_HE3out_KID4out as
    var Pi: UnitP {pub: out};
    var Po1: UnitP {pub: in};
    var Po2: UnitP {pub: in};
    var Po3: UnitP {pub: in};
    var Po4: UnitP {pub: in};
    var Qi: UnitQ {pub: in};
    var Qo1: UnitQ {pub: out};
    var Qo2: UnitQ {init: 0., pub: out};
    var Qo3: UnitQ {init: 0., pub: out};
    var Qo4: UnitQ {init: 0., pub: out};
    var t: second {pub: in};
    var R2: UnitR {pub: in};
    var R3: UnitR {pub: in};
    var R4: UnitR {pub: in};
    var L: UnitL {pub: in};
    var Q0o: UnitQ {pub: in};
    Pi = Po1;
    Qo1 = Qi-Qo2-Qo3-Qo4;
    ode(Qo2, t) = (Pi-Po2-R2*Qo2)/L;
    ode(Qo3, t) = (Pi-Po3-R3*Qo3)/L;
    ode(Qo4, t) = (Pi-Po4-R4*Qo4)/L;
  enddef;

  def comp Bif_BRR1in_BRL2in_BRout as
    var Po: UnitP {pub: in};
    var Pi1: UnitP {pub: out};
    var Pi2: UnitP {pub: out};
    var Qo: UnitQ {pub: out};
    var Qi1: UnitQ {pub: in};
    var Qi2: UnitQ {pub: in};
    Pi1 = Po;
    Pi2 = Po;
    Qo = Qi1+Qi2;
  enddef;

  def comp Bif_UBR1in_UBL2in_UBout as
    var Po: UnitP {pub: in};
    var Pi1: UnitP {pub: out};
    var Pi2: UnitP {pub: out};
    var Qo: UnitQ {pub: out};
    var Qi1: UnitQ {pub: in};
    var Qi2: UnitQ {pub: in};
    Pi1 = Po;
    Pi2 = Po;
    Qo = Qi1+Qi2;
  enddef;

  def comp Bif_DA1in_AI2in_AOout as
    var Po: UnitP {pub: in};
    var Pi1: UnitP {pub: out};
    var Pi2: UnitP {pub: out};
    var Qo: UnitQ {pub: out};
    var Qi1: UnitQ {pub: in};
    var Qi2: UnitQ {pub: in};
    Pi1 = Po;
    Pi2 = Po;
    Qo = Qi1+Qi2;
  enddef;

  def comp Bif_BR1in_UB2in_SVCout as
    var Po: UnitP {pub: in};
    var Pi1: UnitP {pub: out};
    var Pi2: UnitP {pub: out};
    var Qo: UnitQ {pub: out};
    var Qi1: UnitQ {pub: in};
    var Qi2: UnitQ {pub: in};
    Pi1 = Po;
    Pi2 = Po;
    Qo = Qi1+Qi2;
  enddef;

  def comp Bif_LUNG1in_FO2in_LAout as
    var Po: UnitP {pub: in};
    var Pi1: UnitP {pub: out};
    var Pi2: UnitP {pub: out};
    var Qo: UnitQ {pub: out};
    var Qi1: UnitQ {pub: in};
    var Qi2: UnitQ {pub: in};
    Pi1 = Po;
    Pi2 = Po;
    Qo = Qi1+Qi2;
  enddef;

  def comp Bif_DV1in_IVC2in_FOout as
    var Po: UnitP {pub: in};
    var Pi1: UnitP {init: 0., pub: out};
    var Pi2: UnitP {pub: out};
    var Qo: UnitQ {init: 0., pub: out};
    var Qi1: UnitQ {pub: in};
    var Qi2: UnitQ {pub: in};
    var V: UnitV {init: 0};
    var v1: UnitVel {pub: in};
    var t: second {pub: in};
    var K: UnitKfo {pub: in};
    var C1: UnitC {pub: in};
    var C2: UnitC {pub: in};
    var Q0o: UnitQ {pub: in};
    var P0i1: UnitQ {pub: in};
    var P0i2: UnitQ {pub: in};
    var Kvo: UnitKxi {pub: in};
    var Kvc_p: UnitKxi {pub: in};
    var Kvc_n: UnitKxi {pub: in};
    var Linductance: UnitL;
    var L_min: UnitL {pub: in};
    var L_param: UnitLparam {pub: in};
    var xi: dimensionless {init: 1.0};
    var val_xi: ode_s;
    var Aeff: UnitA;
    var Aann: UnitA {pub: in};
    ode(V, t) = Qi1+Qi2-Qo;
    ode(Pi1, t) = (Qi1+Qi2-Qo)/C1;
    Pi2 = Pi1;
    ode(Qo, t) = sel
      case Qo >= 0{dimensionless}:
        (Pi1-Po-K/Aeff*pow(abs(Qo), 0.625{dimensionless}))/Linductance;
      otherwise:
        (Pi1-Po+K/Aeff*pow(abs(Qo), 0.625{dimensionless}))/Linductance;
    endsel;
    Linductance = L_param/Aeff+L_min;
    Aeff = Aann*xi+0.0001{UnitA};
    ode(xi, t) = sel
      case Pi1 >= Po:
        (1{dimensionless}-xi)*Kvo*(Pi1-Po);
      otherwise:
        val_xi;
    endsel;
    val_xi = sel
      case Qi1+Qi2 >= Qo:
        xi*Kvc_p*(Pi1-Po);
      otherwise:
        xi*Kvc_n*(Pi1-Po);
    endsel;
  enddef;

  def comp Bif_UV1in_INTE2in_AO3in_HEout as
    var Po: UnitP {pub: in};
    var Pi1: UnitP {pub: out};
    var Pi2: UnitP {pub: out};
    var Pi3: UnitP {pub: out};
    var Qo: UnitQ {pub: out};
    var Qi1: UnitQ {pub: in};
    var Qi2: UnitQ {pub: in};
    var Qi3: UnitQ {pub: in};
    Pi1 = Po;
    Pi2 = Po;
    Pi3 = Po;
    Qo = Qi1+Qi2+Qi3;
  enddef;

  def comp Bif_KID1in_HE2in_LEG3in_IVCout as
    var Po: UnitP {pub: in};
    var Pi1: UnitP {pub: out};
    var Pi2: UnitP {pub: out};
    var Pi3: UnitP {pub: out};
    var Qo: UnitQ {pub: out};
    var Qi1: UnitQ {pub: in};
    var Qi2: UnitQ {pub: in};
    var Qi3: UnitQ {pub: in};
    Pi1 = Po;
    Pi2 = Po;
    Pi3 = Po;
    Qo = Qi1+Qi2+Qi3;
  enddef;

  def comp Bif_SVC1in_IVC2in_DV3in_Coronary4in_RAout as
    var Po: UnitP {pub: in};
    var Pi1: UnitP {pub: out};
    var Pi2: UnitP {pub: out};
    var Pi3: UnitP {pub: out};
    var Pi4: UnitP {pub: out};
    var Qo: UnitQ {pub: out};
    var Qi1: UnitQ {pub: in};
    var Qi2: UnitQ {pub: in};
    var Qi3: UnitQ {pub: in};
    var Qi4: UnitQ {pub: in};
    Pi1 = Po;
    Pi2 = Po;
    Pi3 = Po;
    Pi4 = Po;
    Qo = Qi1+Qi2+Qi3+Qi4;
  enddef;

  def comp Parameters as
    var T: second {init: 0.43, pub: out};
    var Rfoo: UnitR {init: 0.00001, pub: out};
    var Cfoo: UnitC {init: 0.0005, pub: out};
    var Lfoo: UnitL {init: 0.00001, pub: out};
    var P0foo: UnitP {init: 0., pub: out};
    var Q0foo: UnitQ {init: 0., pub: out};
    var Vlv0: UnitV {init: 23.5, pub: out};
    var Vrv0: UnitV {init: 23.5, pub: out};
    var Vla0: UnitV {init: 23.5, pub: out};
    var Vra0: UnitV {init: 23.5, pub: out};
    var Lscini: Unitl {init: 2., pub: out};
    var C0: dimensionless {init: 0.0, pub: out};
    var Crest: dimensionless {init: 0.02, pub: out};
    var Lsref: Unitl {init: 2., pub: out};
    var kS_v: dimensionless {init: 3., pub: out};
    var p_trise_v: dimensionless {init: 0.14, pub: out};
    var p_td_v: dimensionless {init: 0.08, pub: out};
    var spas_v: UnitP {init: 18.4, pub: out};
    var sact_v: UnitP {init: 246, pub: out};
    var vmax_v: Unitv {init: 7., pub: out};
    var p_tact_v: second {init: 0.28, pub: out};
    var Vwall_lv: UnitV {init: 8.9973, pub: out};
    var Amref_lv: UnitA {init: 20.43225, pub: out};
    var Amdead_lv: UnitA {init: 3, pub: out};
    var Vwall_rv: UnitV {init: 8.9973, pub: out};
    var Amref_rv: UnitA {init: 20.43225, pub: out};
    var Amdead_rv: UnitA {init: 3, pub: out};
    var delay_lv: second {init: 0.375, pub: out};
    var delay_rv: second {init: 0.375, pub: out};
    var kS_a: dimensionless {init: 2.25, pub: out};
    var p_trise_a: dimensionless {init: 0.18, pub: out};
    var p_td_a: dimensionless {init: 0.10, pub: out};
    var spas_a: UnitP {init: 45, pub: out};
    var sact_a: UnitP {init: 110, pub: out};
    var vmax_a: Unitv {init: 10.5, pub: out};
    var p_tact_a: second {init: 0.10, pub: out};
    var Vwall_la: UnitV {init: 1.232, pub: out};
    var Amref_la: UnitA {init: 7.5825, pub: out};
    var Amdead_la: UnitA {init: 3, pub: out};
    var Vwall_ra: UnitV {init: 1.232, pub: out};
    var Amref_ra: UnitA {init: 7.5825, pub: out};
    var Amdead_ra: UnitA {init: 3, pub: out};
    var delay_la: second {init: 0.325, pub: out};
    var delay_ra: second {init: 0.325, pub: out};
    var Kaovo: UnitKxi {init: 186.04789, pub: out};
    var Kaovc_p: UnitKxi {init: 29.76766, pub: out};
    var Kaovc_n: UnitKxi {init: 186.04789, pub: out};
    var Kmivo: UnitKxi {init: 74.41915686963517, pub: out};
    var Kmivc_p: UnitKxi {init: 99.21934, pub: out};
    var Kmivc_n: UnitKxi {init: 186.04789, pub: out};
    var Kpvvo: UnitKxi {init: 186.04789, pub: out};
    var Kpvvc_p: UnitKxi {init: 49.61897, pub: out};
    var Kpvvc_n: UnitKxi {init: 186.04789, pub: out};
    var Ktrvo: UnitKxi {init: 74.41915686963517, pub: out};
    var Ktrvc_p: UnitKxi {init: 99.21934, pub: out};
    var Ktrvc_n: UnitKxi {init: 186.04789, pub: out};
    var Kfovo: UnitKxi {init: 180, pub: out};
    var Kfovc_p: UnitKxi {init: 1000, pub: out};
    var Kfovc_n: UnitKxi {init: 1000, pub: out};
    var L_param: UnitLparam {init: 0.00034289, pub: out};
    var L_min_ao: UnitL {init: 0.0011665, pub: out};
    var L_min_mi: UnitL {init: 0.0011665, pub: out};
    var L_min_pv: UnitL {init: 0.002333078603077328, pub: out};
    var L_min_tr: UnitL {init: 0.0011665, pub: out};
    var L_min_fo: UnitL {init: 0.0011665, pub: out};
    var Aao: UnitA {init: 0.410, pub: out};
    var Ami: UnitA {init: 0.553, pub: out};
    var Apv: UnitA {init: 0.493, pub: out};
    var Atr: UnitA {init: 0.596, pub: out};
    var Afo: UnitA {init: 0.471, pub: out};
    var B_param: UnitBparam {init: 3.975e-4, pub: out};
    var Rdtao: UnitR {init: 0.04887, pub: out};
    var Rdaao: UnitR {init: 0.06807, pub: out};
    var Rpa: UnitR {init: 0.00448, pub: out};
    var Rlung: UnitR {init: 11.4, pub: out};
    var Rda: UnitR {init: 0.02766, pub: out};
    var Relg: UnitR {init: 91.8888, pub: out};
    var Rmea: UnitR {init: 38.572, pub: out};
    var Rporv: UnitR {init: 7.94122, pub: out};
    var Rrea: UnitR {init: 19.853, pub: out};
    var Rrev: UnitR {init: 15.88, pub: out};
    var Rua: UnitR {init: 1.5274, pub: out};
    var Rplac: UnitR {init: 2.67, pub: out};
    var Rplac_prox: UnitR {init: 2, pub: out};
    var Ruv: UnitR {init: 0.2803, pub: out};
    var Rfa: UnitR {init: 10.5, pub: out};
    var Rfv: UnitR {init: 0.68074, pub: out};
    var Rha: UnitR {init: 0.25, pub: out};
    var Rhv: UnitR {init: 0.16005, pub: out};
    var Rdv_fo: UnitR {init: 1.5522, pub: out};
    var Rdv_ra: UnitR {init: 29.492, pub: out};
    var Rsvc: UnitR {init: 0.40968, pub: out};
    var Rivc: UnitR {init: 0.00171, pub: out};
    var Rivc_ra: UnitR {init: 0.38857, pub: out};
    var Rivc_la: UnitR {init: 0.20923, pub: out};
    var Rla: UnitR {init: 0.5691, pub: out};
    var Kfo: UnitKfo {init: 0.21, pub: out};
    var Bda: UnitK {init: 0.01346, pub: out};
    var Bmpa: UnitK {init: 0.001537, pub: out};
    var Kdv_fo: UnitK {init: 0.306, pub: out};
    var Kdv_ra: UnitK {init: 5.81, pub: out};
    var Lda: UnitL {init: 0.0000894, pub: out};
    var Lpa: UnitL {init: 0.00243, pub: out};
    var Cua: UnitC {init: 0.013686, pub: out};
    var Cao1: UnitC {init: 0.07, pub: out};
    var Cao2: UnitC {init: 0.04228, pub: out};
    var Cpa: UnitC {init: 0.08455, pub: out};
    var Clung: UnitC {init: 0.33821, pub: out};
    var Cinte: UnitC {init: 0.21138, pub: out};
    var Ckid: UnitC {init: 0.01691, pub: out};
    var Che: UnitC {init: 2.53659, pub: out};
    var Cplac: UnitC {init: 1.2683, pub: out};
    var Cleg: UnitC {init: 3.38212, pub: out};
    var Cuv: UnitC {init: 0.25366, pub: out};
    var Csvc: UnitC {init: 0.8455, pub: out};
    var Civc: UnitC {init: 0.50732, pub: out};
    var Risthm: UnitR {init: 0.00782, pub: out};
    var Bisthm: UnitK {init: 0.00743, pub: out};
    var BdAoA: UnitK {init: 0.00576, pub: out};
    var Raa: UnitR {init: 0.00733, pub: out};
    var RaAoA: UnitR {init: 0.0059, pub: out};
    var RdAoA: UnitR {init: 0.00832, pub: out};
    var Rbct: UnitR {init: 0.02529, pub: out};
    var R_L_CCA: UnitR {init: 0.3706, pub: out};
    var R_L_ICA: UnitR {init: 0.6324, pub: out};
    var R_L_SC: UnitR {init: 0.16147, pub: out};
    var R_L_ub: UnitR {init: 48, pub: out};
    var R_L_br: UnitR {init: 15.5, pub: out};
    var R_L_ub_p: UnitR {init: 18, pub: out};
    var R_L_br_p: UnitR {init: 1, pub: out};
    var R_R_CCA: UnitR {init: 0.259, pub: out};
    var R_R_ICA: UnitR {init: 0.6324, pub: out};
    var R_R_SC: UnitR {init: 0.16147, pub: out};
    var R_R_ub: UnitR {init: 48, pub: out};
    var R_R_br: UnitR {init: 15.5, pub: out};
    var R_R_ub_p: UnitR {init: 18, pub: out};
    var R_R_br_p: UnitR {init: 1, pub: out};
    var R0_Coronary: UnitR {init: 48, pub: out};
    var k_Coronary: dimensionless {init: 10, pub: out};
    var n_Coronary: dimensionless {init: 1, pub: out};
    var Ps_Coronary: UnitP {init: 25, pub: out};
    var Listhm: UnitL {init: 0.0000104, pub: out};
    var Laa: UnitL {init: 0.0000521, pub: out};
    var LaAoA: UnitL {init: 0.0000209, pub: out};
    var LdAoA: UnitL {init: 0.000028, pub: out};
    var Lbct: UnitL {init: 0.0000411, pub: out};
    var Ldv: UnitL {init: 0.00005, pub: out};
    var L_L_CCA: UnitL {init: 0.0003575, pub: out};
    var L_L_ICA: UnitL {init: 0.000469, pub: out};
    var L_L_SC: UnitL {init: 0.000125, pub: out};
    var L_R_CCA: UnitL {init: 0.0003003, pub: out};
    var L_R_CCO: UnitL {init: 0.0003003, pub: out};
    var L_R_ICA: UnitL {init: 0.000469, pub: out};
    var L_R_SC: UnitL {init: 0.000125, pub: out};
    var Cisthm: UnitC {init: 0.001504, pub: out};
    var Caa: UnitC {init: 0.0708, pub: out};
    var CaAoA: UnitC {init: 0.00209, pub: out};
    var CdAoA: UnitC {init: 0.00176, pub: out};
    var Cbct: UnitC {init: 0.001907, pub: out};
    var C_L_CCA: UnitC {init: 0.00374, pub: out};
    var C_L_ICA: UnitC {init: 0.001015, pub: out};
    var C_L_SC: UnitC {init: 0.000844, pub: out};
    var C_L_ub: UnitC {init: 0.07187, pub: out};
    var C_L_br: UnitC {init: 0.0138, pub: out};
    var C_R_CCA: UnitC {init: 0.00262, pub: out};
    var C_R_ICA: UnitC {init: 0.001015, pub: out};
    var C_R_SC: UnitC {init: 0.000844, pub: out};
    var C_R_ub: UnitC {init: 0.22998, pub: out};
    var C_R_br: UnitC {init: 0.0138, pub: out};
    var Adv: UnitA {init: 0.0157, pub: out};
  enddef;
  def map between environment and LV for
    vars t and t;
  enddef;
  def map between environment and LA for
    vars t and t;
  enddef;
  def map between environment and RV for
    vars t and t;
  enddef;
  def map between environment and RA for
    vars t and t;
  enddef;
  def map between environment and AA_RCL for
    vars t and t;
  enddef;
  def map between environment and AAA_RCL for
    vars t and t;
  enddef;
  def map between environment and DAA_RCL for
    vars t and t;
  enddef;
  def map between environment and AI_RCL for
    vars t and t;
  enddef;
  def map between environment and PA_RCL for
    vars t and t;
  enddef;
  def map between environment and LUNG_RC for
    vars t and t;
  enddef;
  def map between environment and LUNG_RCL for
    vars t and t;
  enddef;
  def map between environment and AO1_RC for
    vars t and t;
  enddef;
  def map between environment and SVC_RCL for
    vars t and t;
  enddef;
  def map between environment and AO2_RCL for
    vars t and t;
  enddef;
  def map between environment and KID_RC for
    vars t and t;
  enddef;
  def map between environment and INTE_RC for
    vars t and t;
  enddef;
  def map between environment and LEG_RC for
    vars t and t;
  enddef;
  def map between environment and UA_RC for
    vars t and t;
  enddef;
  def map between environment and PLAC_RC_prox for
    vars t and t;
  enddef;
  def map between environment and PLAC_RC for
    vars t and t;
  enddef;
  def map between environment and UV_RCL for
    vars t and t;
  enddef;
  def map between environment and HE_RC for
    vars t and t;
  enddef;
  def map between environment and IVC_RCL for
    vars t and t;
  enddef;
  def map between environment and BrachT_RCL for
    vars t and t;
  enddef;
  def map between environment and SubAR_RCL for
    vars t and t;
  enddef;
  def map between environment and UBR_RC for
    vars t and t;
  enddef;
  def map between environment and CCaroAR_RC for
    vars t and t;
  enddef;
  def map between environment and ICaroAR_RCL for
    vars t and t;
  enddef;
  def map between environment and BRR_RC for
    vars t and t;
  enddef;
  def map between environment and CCaroAL_RC for
    vars t and t;
  enddef;
  def map between environment and ICaroAL_RCL for
    vars t and t;
  enddef;
  def map between environment and BRL_RC for
    vars t and t;
  enddef;
  def map between environment and SubAL_RCL for
    vars t and t;
  enddef;
  def map between environment and UBL_RC for
    vars t and t;
  enddef;
  def map between environment and Bif_DV1in_IVC2in_FOout for
    vars t and t;
  enddef;
  def map between environment and Bif_BrachTin_SubAR1out_CCaroAR2out for
    vars t and t;
  enddef;
  def map between environment and Bif_AAin_AAA1out_BrachT2out for
    vars t and t;
  enddef;
  def map between environment and Bif_AAAin_DAA1out_CCaroAL2out for
    vars t and t;
  enddef;
  def map between environment and Bif_DAAin_AI1out_SubAL2out for
    vars t and t;
  enddef;
  def map between environment and Bif_PAin_LUNG1out_DA2out for
    vars t and t;
  enddef;
  def map between environment and Bif_AOin_AO1out_INTE2out_HE3out_KID4out for
    vars t and t;
  enddef;
  def map between environment and Bif_AOin_LEG1out_UA2out for
    vars t and t;
  enddef;
  def map between environment and Bif_UVin_DV1out_HE2out for
    vars t and t;
  enddef;
  def map between environment and Bif_DVin_FO1out_RA2out for
    vars t and t;
  enddef;
  def map between environment and Bif_IVCin_FO1out_RA2out for
    vars t and t;
  enddef;
  def map between environment and Bif_LVin_AA1out_Coronary2out for
    vars t and t;
  enddef;
  def map between LA and LV for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between LV and Bif_LVin_AA1out_Coronary2out for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between AA_RCL and Bif_AAin_AAA1out_BrachT2out for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between Bif_AAin_AAA1out_BrachT2out and AAA_RCL for
    vars Qo1 and Qi;
    vars Po1 and Pi;
  enddef;
  def map between Bif_AAin_AAA1out_BrachT2out and BrachT_RCL for
    vars Qo2 and Qi;
    vars Po2 and Pi;
  enddef;
  def map between AAA_RCL and Bif_AAAin_DAA1out_CCaroAL2out for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between Bif_AAAin_DAA1out_CCaroAL2out and DAA_RCL for
    vars Qo1 and Qi;
    vars Po1 and Pi;
  enddef;
  def map between Bif_AAAin_DAA1out_CCaroAL2out and CCaroAL_RC for
    vars Qo2 and Qi;
    vars Po2 and Pi;
  enddef;
  def map between DAA_RCL and Bif_DAAin_AI1out_SubAL2out for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between Bif_DAAin_AI1out_SubAL2out and AI_RCL for
    vars Qo1 and Qi;
    vars Po1 and Pi;
  enddef;
  def map between AI_RCL and Bif_DA1in_AI2in_AOout for
    vars Qo and Qi2;
    vars Po and Pi2;
  enddef;
  def map between Bif_DAAin_AI1out_SubAL2out and SubAL_RCL for
    vars Qo2 and Qi;
    vars Po2 and Pi;
  enddef;
  def map between BrachT_RCL and Bif_BrachTin_SubAR1out_CCaroAR2out for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between Bif_BrachTin_SubAR1out_CCaroAR2out and SubAR_RCL for
    vars Qo1 and Qi;
    vars Po1 and Pi;
  enddef;
  def map between Bif_BrachTin_SubAR1out_CCaroAR2out and CCaroAR_RC for
    vars Qo2 and Qi;
    vars Po2 and Pi;
  enddef;
  def map between SubAR_RCL and UBR_R for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between UBR_R and UBR_RC for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between SubAL_RCL and UBL_R for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between UBL_R and UBL_RC for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between UBR_RC and Bif_UBR1in_UBL2in_UBout for
    vars Qo and Qi1;
    vars Po and Pi1;
  enddef;
  def map between UBL_RC and Bif_UBR1in_UBL2in_UBout for
    vars Qo and Qi2;
    vars Po and Pi2;
  enddef;
  def map between CCaroAR_RC and ICaroAR_RCL for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between ICaroAR_RCL and BRR_R for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between BRR_R and BRR_RC for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between CCaroAL_RC and ICaroAL_RCL for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between ICaroAL_RCL and BRL_R for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between BRL_R and BRL_RC for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between BRR_RC and Bif_BRR1in_BRL2in_BRout for
    vars Qo and Qi1;
    vars Po and Pi1;
  enddef;
  def map between BRL_RC and Bif_BRR1in_BRL2in_BRout for
    vars Qo and Qi2;
    vars Po and Pi2;
  enddef;
  def map between Bif_BRR1in_BRL2in_BRout and Bif_BR1in_UB2in_SVCout for
    vars Qo and Qi1;
    vars Po and Pi1;
  enddef;
  def map between Bif_UBR1in_UBL2in_UBout and Bif_BR1in_UB2in_SVCout for
    vars Qo and Qi2;
    vars Po and Pi2;
  enddef;
  def map between Bif_BR1in_UB2in_SVCout and SVC_RCL for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between RA and RV for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between RV and PA_RCL for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between PA_RCL and Bif_PAin_LUNG1out_DA2out for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between Bif_PAin_LUNG1out_DA2out and LUNG_RC for
    vars Qo1 and Qi;
    vars Po1 and Pi;
  enddef;
  def map between LUNG_RC and LUNG_RCL for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between Bif_PAin_LUNG1out_DA2out and Bif_DA1in_AI2in_AOout for
    vars Qo2 and Qi1;
    vars Po2 and Pi1;
  enddef;
  def map between Bif_DA1in_AI2in_AOout and AO1_RC for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between AO1_RC and Bif_AOin_AO1out_INTE2out_HE3out_KID4out for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between Bif_AOin_AO1out_INTE2out_HE3out_KID4out and AO2_RCL for
    vars Qo1 and Qi;
    vars Po1 and Pi;
  enddef;
  def map between Bif_AOin_AO1out_INTE2out_HE3out_KID4out and INTE_RC for
    vars Qo2 and Qi;
    vars Po2 and Pi;
  enddef;
  def map between Bif_AOin_AO1out_INTE2out_HE3out_KID4out and Bif_UV1in_INTE2in_AO3in_HEout for
    vars Qo3 and Qi3;
    vars Po3 and Pi3;
  enddef;
  def map between Bif_AOin_AO1out_INTE2out_HE3out_KID4out and KID_RC for
    vars Qo4 and Qi;
    vars Po4 and Pi;
  enddef;
  def map between AO2_RCL and Bif_AOin_LEG1out_UA2out for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between Bif_AOin_LEG1out_UA2out and LEG_RC for
    vars Qo1 and Qi;
    vars Po1 and Pi;
  enddef;
  def map between LEG_RC and Bif_KID1in_HE2in_LEG3in_IVCout for
    vars Qo and Qi3;
    vars Po and Pi3;
  enddef;
  def map between Bif_AOin_LEG1out_UA2out and UA_RC for
    vars Qo2 and Qi;
    vars Po2 and Pi;
  enddef;
  def map between UA_RC and PLAC_RC_prox for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between PLAC_RC_prox and PLAC_RC for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between PLAC_RC and UV_RCL for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between UV_RCL and Bif_UVin_DV1out_HE2out for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between Bif_UVin_DV1out_HE2out and Bif_UV1in_INTE2in_AO3in_HEout for
    vars Qo2 and Qi1;
    vars Po2 and Pi1;
  enddef;
  def map between Bif_UVin_DV1out_HE2out and Bif_DVin_FO1out_RA2out for
    vars Qo1 and Qi;
    vars Po1 and Pi;
  enddef;
  def map between Bif_DVin_FO1out_RA2out and Bif_SVC1in_IVC2in_DV3in_Coronary4in_RAout for
    vars Qo2 and Qi3;
    vars Po2 and Pi3;
  enddef;
  def map between Bif_DVin_FO1out_RA2out and Bif_DV1in_IVC2in_FOout for
    vars Qo1 and Qi1;
    vars Po1 and Pi1;
    vars v1 and v1;
  enddef;
  def map between INTE_RC and Bif_UV1in_INTE2in_AO3in_HEout for
    vars Qo and Qi2;
    vars Po and Pi2;
  enddef;
  def map between Bif_UV1in_INTE2in_AO3in_HEout and HE_RC for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between HE_RC and Bif_KID1in_HE2in_LEG3in_IVCout for
    vars Qo and Qi2;
    vars Po and Pi2;
  enddef;
  def map between KID_RC and Bif_KID1in_HE2in_LEG3in_IVCout for
    vars Qo and Qi1;
    vars Po and Pi1;
  enddef;
  def map between Bif_KID1in_HE2in_LEG3in_IVCout and IVC_RCL for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between IVC_RCL and Bif_IVCin_FO1out_RA2out for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between Bif_IVCin_FO1out_RA2out and Bif_DV1in_IVC2in_FOout for
    vars Qo1 and Qi2;
    vars Po1 and Pi2;
  enddef;
  def map between SVC_RCL and Bif_SVC1in_IVC2in_DV3in_Coronary4in_RAout for
    vars Qo and Qi1;
    vars Po and Pi1;
  enddef;
  def map between Bif_IVCin_FO1out_RA2out and Bif_SVC1in_IVC2in_DV3in_Coronary4in_RAout for
    vars Qo2 and Qi2;
    vars Po2 and Pi2;
  enddef;
  def map between Bif_SVC1in_IVC2in_DV3in_Coronary4in_RAout and RA for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between LUNG_RCL and Bif_LUNG1in_FO2in_LAout for
    vars Qo and Qi1;
    vars Po and Pi1;
  enddef;
  def map between Bif_DV1in_IVC2in_FOout and Bif_LUNG1in_FO2in_LAout for
    vars Qo and Qi2;
    vars Po and Pi2;
  enddef;
  def map between Coronary_R and LV for
    vars Pext and Pi;
  enddef;
  def map between Coronary_R and Bif_SVC1in_IVC2in_DV3in_Coronary4in_RAout for
    vars Qo and Qi4;
    vars Po and Pi4;
  enddef;
  def map between Bif_LVin_AA1out_Coronary2out and AA_RCL for
    vars Qo1 and Qi;
    vars Po1 and Pi;
  enddef;
  def map between Bif_LVin_AA1out_Coronary2out and Coronary_R for
    vars Qo2 and Qi;
    vars Po2 and Pi;
  enddef;
  def map between Bif_LUNG1in_FO2in_LAout and LA for
    vars Qo and Qi;
    vars Po and Pi;
  enddef;
  def map between Parameters and LV for
    vars Vlv0 and Vcav0;
    vars Vwall_lv and Vwall;
    vars delay_lv and delay;
    vars T and T;
    vars p_tact_v and p_tact;
    vars p_trise_v and p_trise;
    vars p_td_v and p_td;
    vars Lsref and Lsref;
    vars Lscini and Lscini;
    vars C0 and C0;
    vars Crest and Crest;
    vars spas_v and spas;
    vars sact_v and sact;
    vars vmax_v and vmax;
    vars kS_v and kS;
    vars Amref_lv and Amref;
    vars Amdead_lv and Amdead;
    vars Q0foo and Q0;
    vars Kaovo and Kvo;
    vars Kaovc_p and Kvc_p;
    vars Kaovc_n and Kvc_n;
    vars L_param and L_param;
    vars L_min_ao and L_min;
    vars Aao and Aann;
    vars B_param and B_param;
  enddef;
  def map between Parameters and RV for
    vars Vrv0 and Vcav0;
    vars Vwall_rv and Vwall;
    vars delay_rv and delay;
    vars T and T;
    vars p_tact_v and p_tact;
    vars p_trise_v and p_trise;
    vars p_td_v and p_td;
    vars Lsref and Lsref;
    vars Lscini and Lscini;
    vars C0 and C0;
    vars Crest and Crest;
    vars spas_v and spas;
    vars sact_v and sact;
    vars vmax_v and vmax;
    vars kS_v and kS;
    vars Amref_rv and Amref;
    vars Amdead_rv and Amdead;
    vars Q0foo and Q0;
    vars Kpvvo and Kvo;
    vars Kpvvc_p and Kvc_p;
    vars Kpvvc_n and Kvc_n;
    vars L_param and L_param;
    vars L_min_pv and L_min;
    vars Apv and Aann;
    vars B_param and B_param;
  enddef;
  def map between Parameters and LA for
    vars Vla0 and Vcav0;
    vars Vwall_la and Vwall;
    vars delay_la and delay;
    vars T and T;
    vars p_tact_a and p_tact;
    vars p_trise_a and p_trise;
    vars p_td_a and p_td;
    vars Lsref and Lsref;
    vars Lscini and Lscini;
    vars C0 and C0;
    vars Crest and Crest;
    vars spas_a and spas;
    vars sact_a and sact;
    vars vmax_a and vmax;
    vars kS_a and kS;
    vars Amref_la and Amref;
    vars Amdead_la and Amdead;
    vars Q0foo and Q0;
    vars Kmivo and Kvo;
    vars Kmivc_p and Kvc_p;
    vars Kmivc_n and Kvc_n;
    vars L_param and L_param;
    vars L_min_mi and L_min;
    vars Ami and Aann;
    vars B_param and B_param;
  enddef;
  def map between Parameters and RA for
    vars Vra0 and Vcav0;
    vars Vwall_ra and Vwall;
    vars delay_ra and delay;
    vars T and T;
    vars p_tact_a and p_tact;
    vars p_trise_a and p_trise;
    vars p_td_a and p_td;
    vars Lsref and Lsref;
    vars Lscini and Lscini;
    vars C0 and C0;
    vars Crest and Crest;
    vars spas_a and spas;
    vars sact_a and sact;
    vars vmax_a and vmax;
    vars kS_a and kS;
    vars Amref_ra and Amref;
    vars Amdead_ra and Amdead;
    vars Q0foo and Q0;
    vars Ktrvo and Kvo;
    vars Ktrvc_p and Kvc_p;
    vars Ktrvc_n and Kvc_n;
    vars L_param and L_param;
    vars L_min_tr and L_min;
    vars Atr and Aann;
    vars B_param and B_param;
  enddef;
  def map between AA_RCL and Parameters for
    vars R and Raa;
    vars C and Caa;
    vars L and Laa;
    vars P0i and P0foo;
    vars Q0o and Q0foo;
  enddef;
  def map between AAA_RCL and Parameters for
    vars R and RaAoA;
    vars C and CaAoA;
    vars L and LaAoA;
    vars P0i and P0foo;
    vars Q0o and Q0foo;
  enddef;
  def map between DAA_RCL and Parameters for
    vars R and RdAoA;
    vars C and CdAoA;
    vars L and LdAoA;
    vars P0i and P0foo;
    vars Q0o and Q0foo;
  enddef;
  def map between AI_RCL and Parameters for
    vars R and Risthm;
    vars Bhere and Bisthm;
    vars Bprox and BdAoA;
    vars C and Cisthm;
    vars L and Listhm;
    vars P0i and P0foo;
    vars Q0o and Q0foo;
  enddef;
  def map between BrachT_RCL and Parameters for
    vars R and Rbct;
    vars C and Cbct;
    vars L and Lbct;
    vars P0i and P0foo;
    vars Q0o and Q0foo;
  enddef;
  def map between SubAR_RCL and Parameters for
    vars R and R_R_SC;
    vars C and C_R_SC;
    vars L and L_R_SC;
    vars P0i and P0foo;
    vars Q0o and Q0foo;
  enddef;
  def map between UBR_R and Parameters for
    vars R and R_R_ub_p;
  enddef;
  def map between UBR_RC and Parameters for
    vars R and R_R_ub;
    vars C and C_R_ub;
    vars P0i and P0foo;
  enddef;
  def map between CCaroAR_RC and Parameters for
    vars R and R_R_CCA;
    vars C and C_R_CCA;
    vars P0i and P0foo;
  enddef;
  def map between ICaroAR_RCL and Parameters for
    vars R and R_R_ICA;
    vars C and C_R_ICA;
    vars L and L_R_ICA;
    vars P0i and P0foo;
    vars Q0o and Q0foo;
  enddef;
  def map between BRR_R and Parameters for
    vars R and R_R_br_p;
  enddef;
  def map between BRR_RC and Parameters for
    vars R and R_R_br;
    vars C and C_R_br;
    vars P0i and P0foo;
  enddef;
  def map between CCaroAL_RC and Parameters for
    vars R and R_L_CCA;
    vars C and C_L_CCA;
    vars P0i and P0foo;
  enddef;
  def map between ICaroAL_RCL and Parameters for
    vars R and R_L_ICA;
    vars C and C_L_ICA;
    vars L and L_L_ICA;
    vars P0i and P0foo;
    vars Q0o and Q0foo;
  enddef;
  def map between BRL_R and Parameters for
    vars R and R_L_br_p;
  enddef;
  def map between BRL_RC and Parameters for
    vars R and R_L_br;
    vars C and C_L_br;
    vars P0i and P0foo;
  enddef;
  def map between SubAL_RCL and Parameters for
    vars R and R_L_SC;
    vars C and C_L_SC;
    vars L and L_L_SC;
    vars P0i and P0foo;
    vars Q0o and Q0foo;
  enddef;
  def map between UBL_R and Parameters for
    vars R and R_L_ub_p;
  enddef;
  def map between UBL_RC and Parameters for
    vars R and R_L_ub;
    vars C and C_L_ub;
    vars P0i and P0foo;
  enddef;
  def map between PA_RCL and Parameters for
    vars R and Rpa;
    vars C and Cpa;
    vars L and Lpa;
    vars P0i and P0foo;
    vars Q0o and Q0foo;
  enddef;
  def map between LUNG_RC and Parameters for
    vars R and Rlung;
    vars C and Cfoo;
    vars P0i and P0foo;
  enddef;
  def map between LUNG_RCL and Parameters for
    vars R and Rla;
    vars C and Clung;
    vars L and Lfoo;
    vars P0i and P0foo;
    vars Q0o and Q0foo;
  enddef;
  def map between AO1_RC and Parameters for
    vars R and Rdtao;
    vars C and Cao1;
    vars P0i and P0foo;
  enddef;
  def map between AO2_RCL and Parameters for
    vars R and Rdaao;
    vars C and Cao2;
    vars L and Lfoo;
    vars P0i and P0foo;
    vars Q0o and Q0foo;
  enddef;
  def map between SVC_RCL and Parameters for
    vars R and Rsvc;
    vars C and Csvc;
    vars L and Lfoo;
    vars P0i and P0foo;
    vars Q0o and Q0foo;
  enddef;
  def map between KID_RC and Parameters for
    vars R and Rrev;
    vars C and Ckid;
    vars P0i and P0foo;
  enddef;
  def map between INTE_RC and Parameters for
    vars R and Rporv;
    vars C and Cinte;
    vars P0i and P0foo;
  enddef;
  def map between LEG_RC and Parameters for
    vars R and Rfv;
    vars C and Cleg;
    vars P0i and P0foo;
  enddef;
  def map between UA_RC and Parameters for
    vars R and Rua;
    vars C and Cua;
    vars P0i and P0foo;
  enddef;
  def map between PLAC_RC_prox and Parameters for
    vars R and Rplac_prox;
    vars C and Cfoo;
    vars P0i and P0foo;
  enddef;
  def map between PLAC_RC and Parameters for
    vars R and Rplac;
    vars C and Cplac;
    vars P0i and P0foo;
  enddef;
  def map between UV_RCL and Parameters for
    vars R and Ruv;
    vars C and Cuv;
    vars L and Lfoo;
    vars P0i and P0foo;
    vars Q0o and Q0foo;
  enddef;
  def map between IVC_RCL and Parameters for
    vars R and Rivc;
    vars C and Civc;
    vars L and Lfoo;
    vars P0i and P0foo;
    vars Q0o and Q0foo;
  enddef;
  def map between HE_RC and Parameters for
    vars R and Rhv;
    vars C and Che;
    vars P0i and P0foo;
  enddef;
  def map between Coronary_R and Parameters for
    vars R0 and R0_Coronary;
    vars k and k_Coronary;
    vars n and n_Coronary;
    vars Ps and Ps_Coronary;
  enddef;
  def map between Bif_PAin_LUNG1out_DA2out and Parameters for
    vars L and Lda;
    vars R1 and Rfoo;
    vars R2 and Rda;
    vars Bhere and Bda;
    vars Bprox and Bmpa;
    vars Q0o and Q0foo;
  enddef;
  def map between Bif_AOin_AO1out_INTE2out_HE3out_KID4out and Parameters for
    vars R2 and Rmea;
    vars R3 and Relg;
    vars R4 and Rrea;
    vars L and Lfoo;
    vars Q0o and Q0foo;
  enddef;
  def map between Bif_AOin_LEG1out_UA2out and Parameters for
    vars L and Lfoo;
    vars R1 and Rfa;
    vars R2 and Rfoo;
    vars Q0o2 and Q0foo;
  enddef;
  def map between Bif_UVin_DV1out_HE2out and Parameters for
    vars L and Lfoo;
    vars R2 and Rha;
    vars Q0o2 and Q0foo;
  enddef;
  def map between Bif_DVin_FO1out_RA2out and Parameters for
    vars L and Ldv;
    vars R1 and Rdv_fo;
    vars K1 and Kdv_fo;
    vars A1 and Adv;
    vars R2 and Rdv_ra;
    vars K2 and Kdv_ra;
    vars Q0o1 and Q0foo;
  enddef;
  def map between Bif_IVCin_FO1out_RA2out and Parameters for
    vars L and Lfoo;
    vars R1 and Rivc_la;
    vars R2 and Rivc_ra;
    vars Q0o2 and Q0foo;
  enddef;
  def map between Bif_DV1in_IVC2in_FOout and Parameters for
    vars K and Kfo;
    vars C1 and Cfoo;
    vars C2 and Cfoo;
    vars Q0o and Q0foo;
    vars P0i1 and P0foo;
    vars P0i2 and P0foo;
    vars Kvo and Kfovo;
    vars Kvc_p and Kfovc_p;
    vars Kvc_n and Kfovc_n;
    vars Aann and Afo;
    vars L_param and L_param;
    vars L_min and L_min_fo;
  enddef;
  def map between Bif_BrachTin_SubAR1out_CCaroAR2out and Parameters for
    vars L and L_R_CCA;
    vars R1 and Rfoo;
    vars R2 and Rfoo;
    vars Q0o2 and Q0foo;
  enddef;
  def map between Bif_AAin_AAA1out_BrachT2out and Parameters for
    vars L and Lfoo;
    vars R1 and Rfoo;
    vars R2 and Rfoo;
    vars Q0o2 and Q0foo;
  enddef;
  def map between Bif_AAAin_DAA1out_CCaroAL2out and Parameters for
    vars L and L_L_CCA;
    vars R1 and Rfoo;
    vars R2 and Rfoo;
    vars Q0o2 and Q0foo;
  enddef;
  def map between Bif_DAAin_AI1out_SubAL2out and Parameters for
    vars L and Lfoo;
    vars R1 and Rfoo;
    vars R2 and Rfoo;
    vars Q0o2 and Q0foo;
  enddef;
  def map between Bif_LVin_AA1out_Coronary2out and Parameters for
    vars L and L_R_CCO;
    vars R1 and Rfoo;
    vars R2 and Rfoo;
    vars Q0o2 and Q0foo;
  enddef;
enddef;
