def model ModelMain as
  def unit UnitP as
    unit pascal {mult: 133};
  enddef;
  def unit UnitQ as
    unit UnitV;
    unit second {expo: -1};
  enddef;
  def unit UnitV as
    unit litre {mult: 0.001};
  enddef;
  def unit Unitc1 as
    unit UnitP {expo: 3};
  enddef;
  def unit Unitc2 as
    unit UnitP {expo: 2};
  enddef;
  def unit UnitHb as
    unit kilogram {mult: 0.001};
    unit litre {expo: -1, mult: 0.001};
  enddef;
  def unit UnitAlpha as
    unit litre {mult: 0.001};
    unit kilogram {expo: -1, mult: 0.001};
  enddef;
  def unit UnitBeta as
    unit UnitP {expo: -1};
  enddef;
  def unit UnitL as
    unit metre {mult: 0.01};
  enddef;
  def unit UnitD as
    unit metre {expo: 2, mult: 0.01};
    unit second {expo: -1};
  enddef;

  def comp environment as
    var t: second {pub: out};
  enddef;

  def comp LA as
    var cO2i: dimensionless {pub: in};
    var cO2o: dimensionless {init: 0.258, pub: out};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var t: second {pub: in};
    var pO2: UnitP {init: 0.};
    var SO2: dimensionless;
    ode(cO2o, t) = cO2i-cO2o;
    ode(pO2, t) = (cO2o-alpha*Hb*SO2/100{dimensionless})/beta-pO2;
    SO2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2, 3{dimensionless})+c2*pO2));
  enddef;

  def comp LV as
    var cO2i: dimensionless {pub: in};
    var cO2o: dimensionless {pub: out};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var t: second {pub: in};
    var pO2: UnitP {init: 0.};
    var SO2: dimensionless;
    cO2o = cO2i;
    ode(pO2, t) = (cO2o-alpha*Hb*SO2/100{dimensionless})/beta-pO2;
    SO2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2, 3{dimensionless})+c2*pO2));
  enddef;

  def comp RA as
    var cO2i: dimensionless {pub: in};
    var cO2o: dimensionless {init: 0, pub: out};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var t: second {pub: in};
    var pO2: UnitP {init: 0.};
    var SO2: dimensionless;
    ode(cO2o, t) = cO2i-cO2o;
    ode(pO2, t) = (cO2o-alpha*Hb*SO2/100{dimensionless})/beta-pO2;
    SO2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2, 3{dimensionless})+c2*pO2));
  enddef;

  def comp RV as
    var cO2i: dimensionless {pub: in};
    var cO2o: dimensionless {pub: out};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var t: second {pub: in};
    var pO2: UnitP {init: 0.};
    var SO2: dimensionless;
    cO2o = cO2i;
    ode(pO2, t) = (cO2o-alpha*Hb*SO2/100{dimensionless})/beta-pO2;
    SO2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2, 3{dimensionless})+c2*pO2));
  enddef;

  def comp BR as
    var cO2i: dimensionless {pub: in};
    var cO2o: dimensionless {pub: out};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var QM: UnitQ {pub: in};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var pO2: UnitP {init: 0.};
    var SO2: dimensionless;
    var t: second {pub: in};
    Qo = Qi;
    cO2o = (cO2i*Qi-QM)/Qo;
    ode(pO2, t) = (cO2o-alpha*Hb*SO2/100{dimensionless})/beta-pO2;
    SO2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2, 3{dimensionless})+c2*pO2));
  enddef;

  def comp UB as
    var cO2i: dimensionless {pub: in};
    var cO2o: dimensionless {pub: out};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var QM: UnitQ {pub: in};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var pO2: UnitP {init: 0.};
    var SO2: dimensionless;
    var t: second {pub: in};
    Qo = Qi;
    cO2o = (cO2i*Qi-QM)/Qo;
    ode(pO2, t) = (cO2o-alpha*Hb*SO2/100{dimensionless})/beta-pO2;
    SO2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2, 3{dimensionless})+c2*pO2));
  enddef;

  def comp KID as
    var cO2i: dimensionless {pub: in};
    var cO2o: dimensionless {pub: out};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var QM: UnitQ {pub: in};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var pO2: UnitP {init: 0.};
    var SO2: dimensionless;
    var t: second {pub: in};
    Qo = Qi;
    cO2o = (cO2i*Qi-QM)/Qo;
    ode(pO2, t) = (cO2o-alpha*Hb*SO2/100{dimensionless})/beta-pO2;
    SO2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2, 3{dimensionless})+c2*pO2));
  enddef;

  def comp HE as
    var cO2i: dimensionless {pub: in};
    var cO2o: dimensionless {pub: out};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var QM: UnitQ {pub: in};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var pO2: UnitP {init: 0.};
    var SO2: dimensionless;
    var t: second {pub: in};
    Qo = Qi;
    cO2o = (cO2i*Qi-QM)/Qo;
    ode(pO2, t) = (cO2o-alpha*Hb*SO2/100{dimensionless})/beta-pO2;
    SO2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2, 3{dimensionless})+c2*pO2));
  enddef;

  def comp INTE as
    var cO2i: dimensionless {pub: in};
    var cO2o: dimensionless {pub: out};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var QM: UnitQ {pub: in};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var pO2: UnitP {init: 0.};
    var SO2: dimensionless;
    var t: second {pub: in};
    Qo = Qi;
    cO2o = (cO2i*Qi-QM)/Qo;
    ode(pO2, t) = (cO2o-alpha*Hb*SO2/100{dimensionless})/beta-pO2;
    SO2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2, 3{dimensionless})+c2*pO2));
  enddef;

  def comp LEG as
    var cO2i: dimensionless {pub: in};
    var cO2o: dimensionless {pub: out};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var QM: UnitQ {pub: in};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var pO2: UnitP {init: 0.};
    var SO2: dimensionless;
    var t: second {pub: in};
    Qo = Qi;
    cO2o = (cO2i*Qi-QM)/Qo;
    ode(pO2, t) = (cO2o-alpha*Hb*SO2/100{dimensionless})/beta-pO2;
    SO2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2, 3{dimensionless})+c2*pO2));
  enddef;

  def comp PLAC as
    var cO2i: dimensionless {pub: in};
    var cO2o: dimensionless {pub: out};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var Diff: UnitQ;
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var t: second {pub: in};
    var pO2: UnitP {init: 0.};
    var SO2: dimensionless;
    var cO2m: dimensionless {pub: in};
    var B: dimensionless {pub: in};
    var alpha_c: dimensionless {pub: in};
    var Dt: UnitD {pub: in};
    var Dp: UnitD {pub: in};
    var L: UnitL {pub: in};
    var Lc: UnitL {pub: in};
    var N: UnitQ;
    var mu: dimensionless;
    var Da: dimensionless;
    var Daf: dimensionless;
    var Nmax: UnitQ;
    var n_villi: dimensionless {pub: in};
    Qo = Qi;
    Da = Dt*L*n_villi/(B*Qo);
    Daf = sqr(mu)*Da/pow(alpha_c, 3{dimensionless});
    mu = Dt*L/(Dp*Lc);
    Nmax = Dt*(cO2m-cO2i)*L;
    N = Nmax/(Da*pow(1{dimensionless}-exp(-Da), -1{dimensionless})+pow(Daf, 1{dimensionless}/3{dimensionless}));
    Diff = n_villi*N;
    cO2o = (cO2i*Qi+Diff)/Qo;
    ode(pO2, t) = (cO2o-alpha*Hb*SO2/100{dimensionless})/beta-pO2;
    SO2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2, 3{dimensionless})+c2*pO2));
  enddef;

  def comp LUNG as
    var cO2i: dimensionless {pub: in};
    var cO2o: dimensionless {pub: out};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var QM: UnitQ {pub: in};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var pO2: UnitP {init: 0.};
    var SO2: dimensionless;
    var t: second {pub: in};
    Qo = Qi;
    cO2o = (cO2i*Qi-QM)/Qo;
    ode(pO2, t) = (cO2o-alpha*Hb*SO2/100{dimensionless})/beta-pO2;
    SO2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2, 3{dimensionless})+c2*pO2));
  enddef;

  def comp CORONARIES as
    var cO2i: dimensionless {pub: in};
    var cO2o: dimensionless {pub: out};
    var Qi: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var QM: UnitQ {pub: in};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var pO2: UnitP {init: 0.};
    var SO2: dimensionless;
    var t: second {pub: in};
    Qo = Qi;
    cO2o = (cO2i*Qi-QM)/Qo;
    ode(pO2, t) = (cO2o-alpha*Hb*SO2/100{dimensionless})/beta-pO2;
    SO2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2, 3{dimensionless})+c2*pO2));
  enddef;

  def comp Bif_RVin_UP1out_AO2out_CORONARIES3out as
    var cO2i: dimensionless {pub: in};
    var cO2o1: dimensionless {pub: out};
    var cO2o2: dimensionless {pub: out};
    var cO2o3: dimensionless {pub: out};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var t: second {pub: in};
    var pO2_1: UnitP {init: 0.};
    var SO2_1: dimensionless;
    var pO2_2: UnitP {init: 0.};
    var SO2_2: dimensionless;
    var pO2_3: UnitP {init: 0.};
    var SO2_3: dimensionless;
    cO2o1 = cO2i;
    cO2o2 = cO2i;
    cO2o3 = cO2i;
    ode(pO2_1, t) = (cO2o1-alpha*Hb*SO2_1/100{dimensionless})/beta-pO2_1;
    SO2_1 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2_1, 3{dimensionless})+c2*pO2_1));
    ode(pO2_2, t) = (cO2o2-alpha*Hb*SO2_2/100{dimensionless})/beta-pO2_2;
    SO2_2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2_2, 3{dimensionless})+c2*pO2_2));
    ode(pO2_3, t) = (cO2o3-alpha*Hb*SO2_3/100{dimensionless})/beta-pO2_3;
    SO2_3 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2_3, 3{dimensionless})+c2*pO2_3));
  enddef;

  def comp Bif_MPAin_LUNG1out_DA2out as
    var cO2i: dimensionless {pub: in};
    var cO2o1: dimensionless {pub: out};
    var cO2o2: dimensionless {pub: out};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var t: second {pub: in};
    var pO2_1: UnitP {init: 0.};
    var SO2_1: dimensionless;
    var pO2_2: UnitP {init: 0.};
    var SO2_2: dimensionless;
    cO2o1 = cO2i;
    cO2o2 = cO2i;
    ode(pO2_1, t) = (cO2o1-alpha*Hb*SO2_1/100{dimensionless})/beta-pO2_1;
    SO2_1 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2_1, 3{dimensionless})+c2*pO2_1));
    ode(pO2_2, t) = (cO2o2-alpha*Hb*SO2_2/100{dimensionless})/beta-pO2_2;
    SO2_2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2_2, 3{dimensionless})+c2*pO2_2));
  enddef;

  def comp Bif_AOin_KIDart1out_HEart2out_INTEart3out_LEGart4out_UA5out as
    var cO2i: dimensionless {pub: in};
    var cO2o1: dimensionless {pub: out};
    var cO2o2: dimensionless {pub: out};
    var cO2o3: dimensionless {pub: out};
    var cO2o4: dimensionless {pub: out};
    var cO2o5: dimensionless {pub: out};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var t: second {pub: in};
    var pO2_1: UnitP {init: 0.};
    var SO2_1: dimensionless;
    var pO2_2: UnitP {init: 0.};
    var SO2_2: dimensionless;
    var pO2_3: UnitP {init: 0.};
    var SO2_3: dimensionless;
    var pO2_4: UnitP {init: 0.};
    var SO2_4: dimensionless;
    var pO2_5: UnitP {init: 0.};
    var SO2_5: dimensionless;
    cO2o1 = cO2i;
    cO2o2 = cO2i;
    cO2o3 = cO2i;
    cO2o4 = cO2i;
    cO2o5 = cO2i;
    ode(pO2_1, t) = (cO2o1-alpha*Hb*SO2_1/100{dimensionless})/beta-pO2_1;
    SO2_1 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2_1, 3{dimensionless})+c2*pO2_1));
    ode(pO2_2, t) = (cO2o2-alpha*Hb*SO2_2/100{dimensionless})/beta-pO2_2;
    SO2_2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2_2, 3{dimensionless})+c2*pO2_2));
    ode(pO2_3, t) = (cO2o3-alpha*Hb*SO2_3/100{dimensionless})/beta-pO2_3;
    SO2_3 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2_3, 3{dimensionless})+c2*pO2_3));
    ode(pO2_4, t) = (cO2o4-alpha*Hb*SO2_4/100{dimensionless})/beta-pO2_4;
    SO2_4 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2_4, 3{dimensionless})+c2*pO2_4));
    ode(pO2_5, t) = (cO2o5-alpha*Hb*SO2_5/100{dimensionless})/beta-pO2_5;
    SO2_5 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2_5, 3{dimensionless})+c2*pO2_5));
  enddef;

  def comp Bif_UPin_BR1out_UB2out as
    var cO2i: dimensionless {pub: in};
    var cO2o1: dimensionless {pub: out};
    var cO2o2: dimensionless {pub: out};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var t: second {pub: in};
    var pO2_1: UnitP {init: 0.};
    var SO2_1: dimensionless;
    var pO2_2: UnitP {init: 0.};
    var SO2_2: dimensionless;
    cO2o1 = cO2i;
    cO2o2 = cO2i;
    ode(pO2_1, t) = (cO2o1-alpha*Hb*SO2_1/100{dimensionless})/beta-pO2_1;
    SO2_1 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2_1, 3{dimensionless})+c2*pO2_1));
    ode(pO2_2, t) = (cO2o2-alpha*Hb*SO2_2/100{dimensionless})/beta-pO2_2;
    SO2_2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2_2, 3{dimensionless})+c2*pO2_2));
  enddef;

  def comp Bif_UVin_DV1out_IntraHe2out as
    var cO2i: dimensionless {pub: in};
    var cO2o1: dimensionless {pub: out};
    var cO2o2: dimensionless {pub: out};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var t: second {pub: in};
    var pO2_1: UnitP {init: 0.};
    var SO2_1: dimensionless;
    var pO2_2: UnitP {init: 0.};
    var SO2_2: dimensionless;
    cO2o1 = cO2i;
    cO2o2 = cO2i;
    ode(pO2_1, t) = (cO2o1-alpha*Hb*SO2_1/100{dimensionless})/beta-pO2_1;
    SO2_1 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2_1, 3{dimensionless})+c2*pO2_1));
    ode(pO2_2, t) = (cO2o2-alpha*Hb*SO2_2/100{dimensionless})/beta-pO2_2;
    SO2_2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2_2, 3{dimensionless})+c2*pO2_2));
  enddef;

  def comp Bif_DVin_DVra1out_DVfo2out as
    var cO2i: dimensionless {pub: in};
    var cO2o1: dimensionless {pub: out};
    var cO2o2: dimensionless {pub: out};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var t: second {pub: in};
    var pO2_1: UnitP {init: 0.};
    var SO2_1: dimensionless;
    var pO2_2: UnitP {init: 0.};
    var SO2_2: dimensionless;
    cO2o1 = cO2i;
    cO2o2 = cO2i;
    ode(pO2_1, t) = (cO2o1-alpha*Hb*SO2_1/100{dimensionless})/beta-pO2_1;
    SO2_1 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2_1, 3{dimensionless})+c2*pO2_1));
    ode(pO2_2, t) = (cO2o2-alpha*Hb*SO2_2/100{dimensionless})/beta-pO2_2;
    SO2_2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2_2, 3{dimensionless})+c2*pO2_2));
  enddef;

  def comp Bif_IVCin_IVCra1out_IVCfo2out as
    var cO2i: dimensionless {pub: in};
    var cO2o1: dimensionless {pub: out};
    var cO2o2: dimensionless {pub: out};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var t: second {pub: in};
    var pO2_1: UnitP {init: 0.};
    var SO2_1: dimensionless;
    var pO2_2: UnitP {init: 0.};
    var SO2_2: dimensionless;
    cO2o1 = cO2i;
    cO2o2 = cO2i;
    ode(pO2_1, t) = (cO2o1-alpha*Hb*SO2_1/100{dimensionless})/beta-pO2_1;
    SO2_1 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2_1, 3{dimensionless})+c2*pO2_1));
    ode(pO2_2, t) = (cO2o2-alpha*Hb*SO2_2/100{dimensionless})/beta-pO2_2;
    SO2_2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2_2, 3{dimensionless})+c2*pO2_2));
  enddef;

  def comp Bif_SVCin_SVCra1out_SVCfo2out as
    var cO2i: dimensionless {pub: in};
    var cO2o1: dimensionless {pub: out};
    var cO2o2: dimensionless {pub: out};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var t: second {pub: in};
    var pO2_1: UnitP {init: 0.};
    var SO2_1: dimensionless;
    var pO2_2: UnitP {init: 0.};
    var SO2_2: dimensionless;
    cO2o1 = cO2i;
    cO2o2 = cO2i;
    ode(pO2_1, t) = (cO2o1-alpha*Hb*SO2_1/100{dimensionless})/beta-pO2_1;
    SO2_1 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2_1, 3{dimensionless})+c2*pO2_1));
    ode(pO2_2, t) = (cO2o2-alpha*Hb*SO2_2/100{dimensionless})/beta-pO2_2;
    SO2_2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2_2, 3{dimensionless})+c2*pO2_2));
  enddef;

  def comp Bif_IVC1in_SVC2in_DV3in_CORONARIES4in_RAout as
    var Qi1: UnitQ {pub: in};
    var Qi2: UnitQ {pub: in};
    var Qi3: UnitQ {pub: in};
    var Qi4: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var cO2i1: dimensionless {pub: in};
    var cO2i2: dimensionless {pub: in};
    var cO2i3: dimensionless {pub: in};
    var cO2i4: dimensionless {pub: in};
    var cO2o: dimensionless {pub: out};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var pO2: UnitP {init: 0.};
    var SO2: dimensionless;
    var t: second {pub: in};
    Qo = Qi1+Qi2+Qi3+Qi4;
    cO2o = (Qi1*cO2i1+Qi2*cO2i2+Qi3*cO2i3+Qi4*cO2i4)/Qo;
    ode(pO2, t) = (cO2o-alpha*Hb*SO2/100{dimensionless})/beta-pO2;
    SO2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2, 3{dimensionless})+c2*pO2));
  enddef;

  def comp Bif_BR1in_UB2in_SVCout as
    var Qi1: UnitQ {pub: in};
    var Qi2: UnitQ {pub: in};
    var Qo: UnitQ;
    var cO2i1: dimensionless {pub: in};
    var cO2i2: dimensionless {pub: in};
    var cO2o: dimensionless {pub: out};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var pO2: UnitP {init: 0.};
    var SO2: dimensionless;
    var t: second {pub: in};
    Qo = Qi1+Qi2;
    cO2o = (Qi1*cO2i1+Qi2*cO2i2)/Qo;
    ode(pO2, t) = (cO2o-alpha*Hb*SO2/100{dimensionless})/beta-pO2;
    SO2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2, 3{dimensionless})+c2*pO2));
  enddef;

  def comp Bif_KID1in_HE2in_LEG3in_IVCout as
    var Qi1: UnitQ {pub: in};
    var Qi2: UnitQ {pub: in};
    var Qi3: UnitQ {pub: in};
    var Qo: UnitQ;
    var cO2i1: dimensionless {pub: in};
    var cO2i2: dimensionless {pub: in};
    var cO2i3: dimensionless {pub: in};
    var cO2o: dimensionless {pub: out};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var pO2: UnitP {init: 0.};
    var SO2: dimensionless;
    var t: second {pub: in};
    Qo = Qi1+Qi2+Qi3;
    cO2o = (Qi1*cO2i1+Qi2*cO2i2+Qi3*cO2i3)/Qo;
    ode(pO2, t) = (cO2o-alpha*Hb*SO2/100{dimensionless})/beta-pO2;
    SO2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2, 3{dimensionless})+c2*pO2));
  enddef;

  def comp Bif_HEart1in_PortalVein2in_IntraHe3in_HEout as
    var Qi1: UnitQ {pub: in};
    var Qi2: UnitQ {pub: in};
    var Qi3: UnitQ {pub: in};
    var Qo: UnitQ;
    var cO2i1: dimensionless {pub: in};
    var cO2i2: dimensionless {pub: in};
    var cO2i3: dimensionless {pub: in};
    var cO2o: dimensionless {pub: out};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var pO2: UnitP {init: 0.};
    var SO2: dimensionless;
    var t: second {pub: in};
    Qo = Qi1+Qi2+Qi3;
    cO2o = (Qi1*cO2i1+Qi2*cO2i2+Qi3*cO2i3)/Qo;
    ode(pO2, t) = (cO2o-alpha*Hb*SO2/100{dimensionless})/beta-pO2;
    SO2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2, 3{dimensionless})+c2*pO2));
  enddef;

  def comp Bif_AO1in_DA2in_dAOout as
    var Qi1: UnitQ {pub: in};
    var Qi2: UnitQ {pub: in};
    var Qo: UnitQ;
    var cO2i1: dimensionless {pub: in};
    var cO2i2: dimensionless {pub: in};
    var cO2o: dimensionless {pub: out};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var pO2: UnitP {init: 0.};
    var SO2: dimensionless;
    var t: second {pub: in};
    Qo = Qi1+Qi2;
    cO2o = (Qi1*cO2i1+Qi2*cO2i2)/Qo;
    ode(pO2, t) = (cO2o-alpha*Hb*SO2/100{dimensionless})/beta-pO2;
    SO2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2, 3{dimensionless})+c2*pO2));
  enddef;

  def comp Bif_LUNG1in_FO2in_LAout as
    var Qi1: UnitQ {pub: in};
    var Qi2: UnitQ {pub: in};
    var Qo: UnitQ {pub: out};
    var cO2i1: dimensionless {pub: in};
    var cO2i2: dimensionless {pub: in};
    var cO2o: dimensionless {pub: out};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var pO2: UnitP {init: 0.};
    var SO2: dimensionless;
    var t: second {pub: in};
    Qo = Qi1+Qi2;
    cO2o = (Qi1*cO2i1+Qi2*cO2i2)/Qo;
    ode(pO2, t) = (cO2o-alpha*Hb*SO2/100{dimensionless})/beta-pO2;
    SO2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2, 3{dimensionless})+c2*pO2));
  enddef;

  def comp Bif_IVC1in_DV2in_SVC3in_FOout as
    var Qi1: UnitQ {pub: in};
    var Qi2: UnitQ {pub: in};
    var Qi3: UnitQ {pub: in};
    var Qo: UnitQ;
    var cO2i1: dimensionless {pub: in};
    var cO2i2: dimensionless {pub: in};
    var cO2i3: dimensionless {pub: in};
    var cO2o: dimensionless {pub: out};
    var alpha: UnitAlpha {pub: in};
    var beta: UnitBeta {pub: in};
    var Hb: UnitHb {pub: in};
    var c1: Unitc1 {pub: in};
    var c2: Unitc2 {pub: in};
    var pO2: UnitP {init: 0.};
    var SO2: dimensionless;
    var t: second {pub: in};
    Qo = Qi1+Qi2+Qi3;
    cO2o = (Qi1*cO2i1+Qi2*cO2i2+Qi3*cO2i3)/Qo;
    ode(pO2, t) = (cO2o-alpha*Hb*SO2/100{dimensionless})/beta-pO2;
    SO2 = 100{dimensionless}/(1{dimensionless}+c1/(pow(pO2, 3{dimensionless})+c2*pO2));
  enddef;

  def comp Parameters as
    var alpha: UnitAlpha {init: 1.34, pub: out};
    var beta: UnitBeta {init: 0.000031, pub: out};
    var Hb: UnitHb {init: 0.17, pub: out};
    var c1: Unitc1 {init: 10400, pub: out};
    var c2: Unitc2 {init: 150, pub: out};
    var Q_PLAC: UnitQ {init: 4.114000000000000000000000000000000000, pub: out};
    var Q_BR: UnitQ {init: 3.166000000000000000000000000000000000, pub: out};
    var Q_UB: UnitQ {init: 0.83400000000000000000000000000000000, pub: out};
    var Q_DA: UnitQ {init: 2.83700000000000000000000000000000000, pub: out};
    var Q_LUNG: UnitQ {init: 2.93000000000000000000000000000000000, pub: out};
    var Q_AO: UnitQ {init: 5.22000000000000000000000000000000000, pub: out};
    var Q_KID: UnitQ {init: 0.748000000000000000000000000000000000, pub: out};
    var Q_HeArt: UnitQ {init: 0.28400000000000000000000000000000000, pub: out};
    var Q_IntraHe: UnitQ {init: 2.82600000000000000000000000000000000, pub: out};
    var Q_INTE: UnitQ {init: 0.5620000000000000000000000000000000000, pub: out};
    var Q_LEG: UnitQ {init: 2.35000000000000000000000000000000000, pub: out};
    var Q_DVfo: UnitQ {init: 0.279000000000000000000000000000000000, pub: out};
    var Q_DVra: UnitQ {init: 1.008000000000000000000000000000000000, pub: out};
    var Q_IVCfo: UnitQ {init: 2.558000000000000000000000000000000000, pub: out};
    var Q_IVCra: UnitQ {init: 4.212000000000000000000000000000000000, pub: out};
    var Q_SVCfo: UnitQ {init: 2.558000000000000000000000000000000000, pub: out};
    var Q_SVCra: UnitQ {init: 4.212000000000000000000000000000000000, pub: out};
    var Q_CORONARIES: UnitQ {init: 0.447000000000000000000000000000000000, pub: out};
    var QM_CORONARIES: UnitQ {init: 0.039291200000000000000000000000000000000, pub: out};
    var QM_BR: UnitQ {init: 0.163209600000000000000000000000000000000, pub: out};
    var QM_UB: UnitQ {init: 0.00468190000000000000000000000000000000, pub: out};
    var QM_KID: UnitQ {init: 0.00132050000000000000000000000000000000, pub: out};
    var QM_LEG: UnitQ {init: 0.013505500000000000000000000000000000000, pub: out};
    var QM_LUNG: UnitQ {init: 0.0288117000000000000000000000000000000, pub: out};
    var QM_INTE: UnitQ {init: 0.00306120000000000000000000000000000000, pub: out};
    var QM_HE: UnitQ {init: 0.0483584000000000000000000000000000000, pub: out};
    var D_PLAC: UnitQ {init: 0.30224000000000000000000000000000000000, pub: out};
    var cO2m: dimensionless {init: 0.155, pub: out};
    var B: dimensionless {init: 141, pub: out};
    var alpha_c: dimensionless {init: 5.5, pub: out};
    var Dt: UnitD {init: 0.00002, pub: out};
    var Dp: UnitD {init: 0.00002, pub: out};
    var L: UnitL {init: 1.32, pub: out};
    var Lc: UnitL {init: 0.21, pub: out};
    var n_villi: dimensionless {init: 348307, pub: out};
  enddef;
  def map between environment and LA for
    vars t and t;
  enddef;
  def map between environment and LV for
    vars t and t;
  enddef;
  def map between environment and RA for
    vars t and t;
  enddef;
  def map between environment and RV for
    vars t and t;
  enddef;
  def map between environment and PLAC for
    vars t and t;
  enddef;
  def map between environment and BR for
    vars t and t;
  enddef;
  def map between environment and UB for
    vars t and t;
  enddef;
  def map between environment and KID for
    vars t and t;
  enddef;
  def map between environment and HE for
    vars t and t;
  enddef;
  def map between environment and INTE for
    vars t and t;
  enddef;
  def map between environment and LEG for
    vars t and t;
  enddef;
  def map between environment and LUNG for
    vars t and t;
  enddef;
  def map between environment and CORONARIES for
    vars t and t;
  enddef;
  def map between environment and Bif_RVin_UP1out_AO2out_CORONARIES3out for
    vars t and t;
  enddef;
  def map between environment and Bif_MPAin_LUNG1out_DA2out for
    vars t and t;
  enddef;
  def map between environment and Bif_AOin_KIDart1out_HEart2out_INTEart3out_LEGart4out_UA5out for
    vars t and t;
  enddef;
  def map between environment and Bif_UPin_BR1out_UB2out for
    vars t and t;
  enddef;
  def map between environment and Bif_UVin_DV1out_IntraHe2out for
    vars t and t;
  enddef;
  def map between environment and Bif_DVin_DVra1out_DVfo2out for
    vars t and t;
  enddef;
  def map between environment and Bif_IVCin_IVCra1out_IVCfo2out for
    vars t and t;
  enddef;
  def map between environment and Bif_SVCin_SVCra1out_SVCfo2out for
    vars t and t;
  enddef;
  def map between environment and Bif_IVC1in_SVC2in_DV3in_CORONARIES4in_RAout for
    vars t and t;
  enddef;
  def map between environment and Bif_BR1in_UB2in_SVCout for
    vars t and t;
  enddef;
  def map between environment and Bif_KID1in_HE2in_LEG3in_IVCout for
    vars t and t;
  enddef;
  def map between environment and Bif_HEart1in_PortalVein2in_IntraHe3in_HEout for
    vars t and t;
  enddef;
  def map between environment and Bif_AO1in_DA2in_dAOout for
    vars t and t;
  enddef;
  def map between environment and Bif_LUNG1in_FO2in_LAout for
    vars t and t;
  enddef;
  def map between environment and Bif_IVC1in_DV2in_SVC3in_FOout for
    vars t and t;
  enddef;
  def map between LA and LV for
    vars cO2o and cO2i;
  enddef;
  def map between RA and RV for
    vars cO2o and cO2i;
  enddef;
  def map between LV and Bif_MPAin_LUNG1out_DA2out for
    vars cO2o and cO2i;
  enddef;
  def map between RV and Bif_RVin_UP1out_AO2out_CORONARIES3out for
    vars cO2o and cO2i;
  enddef;
  def map between Bif_MPAin_LUNG1out_DA2out and LUNG for
    vars cO2o1 and cO2i;
  enddef;
  def map between Bif_MPAin_LUNG1out_DA2out and Bif_AO1in_DA2in_dAOout for
    vars cO2o2 and cO2i2;
  enddef;
  def map between Bif_RVin_UP1out_AO2out_CORONARIES3out and Bif_UPin_BR1out_UB2out for
    vars cO2o1 and cO2i;
  enddef;
  def map between Bif_RVin_UP1out_AO2out_CORONARIES3out and Bif_AO1in_DA2in_dAOout for
    vars cO2o2 and cO2i1;
  enddef;
  def map between Bif_RVin_UP1out_AO2out_CORONARIES3out and CORONARIES for
    vars cO2o3 and cO2i;
  enddef;
  def map between Bif_UPin_BR1out_UB2out and BR for
    vars cO2o1 and cO2i;
  enddef;
  def map between Bif_UPin_BR1out_UB2out and UB for
    vars cO2o2 and cO2i;
  enddef;
  def map between BR and Bif_BR1in_UB2in_SVCout for
    vars Qo and Qi1;
    vars cO2o and cO2i1;
  enddef;
  def map between UB and Bif_BR1in_UB2in_SVCout for
    vars Qo and Qi2;
    vars cO2o and cO2i2;
  enddef;
  def map between Bif_AO1in_DA2in_dAOout and Bif_AOin_KIDart1out_HEart2out_INTEart3out_LEGart4out_UA5out for
    vars cO2o and cO2i;
  enddef;
  def map between Bif_AOin_KIDart1out_HEart2out_INTEart3out_LEGart4out_UA5out and KID for
    vars cO2o1 and cO2i;
  enddef;
  def map between Bif_AOin_KIDart1out_HEart2out_INTEart3out_LEGart4out_UA5out and Bif_HEart1in_PortalVein2in_IntraHe3in_HEout for
    vars cO2o2 and cO2i1;
  enddef;
  def map between Bif_AOin_KIDart1out_HEart2out_INTEart3out_LEGart4out_UA5out and INTE for
    vars cO2o3 and cO2i;
  enddef;
  def map between Bif_AOin_KIDart1out_HEart2out_INTEart3out_LEGart4out_UA5out and LEG for
    vars cO2o4 and cO2i;
  enddef;
  def map between Bif_AOin_KIDart1out_HEart2out_INTEart3out_LEGart4out_UA5out and PLAC for
    vars cO2o5 and cO2i;
  enddef;
  def map between KID and Bif_KID1in_HE2in_LEG3in_IVCout for
    vars Qo and Qi1;
    vars cO2o and cO2i1;
  enddef;
  def map between HE and Bif_KID1in_HE2in_LEG3in_IVCout for
    vars Qo and Qi2;
    vars cO2o and cO2i2;
  enddef;
  def map between LEG and Bif_KID1in_HE2in_LEG3in_IVCout for
    vars Qo and Qi3;
    vars cO2o and cO2i3;
  enddef;
  def map between PLAC and Bif_UVin_DV1out_IntraHe2out for
    vars cO2o and cO2i;
  enddef;
  def map between Bif_UVin_DV1out_IntraHe2out and Bif_DVin_DVra1out_DVfo2out for
    vars cO2o1 and cO2i;
  enddef;
  def map between Bif_DVin_DVra1out_DVfo2out and Bif_IVC1in_SVC2in_DV3in_CORONARIES4in_RAout for
    vars cO2o1 and cO2i3;
  enddef;
  def map between Bif_DVin_DVra1out_DVfo2out and Bif_IVC1in_DV2in_SVC3in_FOout for
    vars cO2o2 and cO2i2;
  enddef;
  def map between Bif_IVC1in_DV2in_SVC3in_FOout and Bif_LUNG1in_FO2in_LAout for
    vars Qo and Qi2;
    vars cO2o and cO2i2;
  enddef;
  def map between LUNG and Bif_LUNG1in_FO2in_LAout for
    vars Qo and Qi1;
    vars cO2o and cO2i1;
  enddef;
  def map between Bif_LUNG1in_FO2in_LAout and LA for
    vars cO2o and cO2i;
  enddef;
  def map between INTE and Bif_HEart1in_PortalVein2in_IntraHe3in_HEout for
    vars Qo and Qi2;
    vars cO2o and cO2i2;
  enddef;
  def map between Bif_UVin_DV1out_IntraHe2out and Bif_HEart1in_PortalVein2in_IntraHe3in_HEout for
    vars cO2o2 and cO2i3;
  enddef;
  def map between Bif_HEart1in_PortalVein2in_IntraHe3in_HEout and HE for
    vars cO2o and cO2i;
    vars Qo and Qi;
  enddef;
  def map between Bif_KID1in_HE2in_LEG3in_IVCout and Bif_IVCin_IVCra1out_IVCfo2out for
    vars cO2o and cO2i;
  enddef;
  def map between Bif_IVCin_IVCra1out_IVCfo2out and Bif_IVC1in_SVC2in_DV3in_CORONARIES4in_RAout for
    vars cO2o1 and cO2i1;
  enddef;
  def map between Bif_IVCin_IVCra1out_IVCfo2out and Bif_IVC1in_DV2in_SVC3in_FOout for
    vars cO2o2 and cO2i1;
  enddef;
  def map between Bif_BR1in_UB2in_SVCout and Bif_SVCin_SVCra1out_SVCfo2out for
    vars cO2o and cO2i;
  enddef;
  def map between Bif_SVCin_SVCra1out_SVCfo2out and Bif_IVC1in_SVC2in_DV3in_CORONARIES4in_RAout for
    vars cO2o1 and cO2i2;
  enddef;
  def map between Bif_SVCin_SVCra1out_SVCfo2out and Bif_IVC1in_DV2in_SVC3in_FOout for
    vars cO2o2 and cO2i3;
  enddef;
  def map between CORONARIES and Bif_IVC1in_SVC2in_DV3in_CORONARIES4in_RAout for
    vars Qo and Qi4;
    vars cO2o and cO2i4;
  enddef;
  def map between Bif_IVC1in_SVC2in_DV3in_CORONARIES4in_RAout and RA for
    vars cO2o and cO2i;
  enddef;
  def map between LA and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
  enddef;
  def map between LV and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
  enddef;
  def map between RA and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
  enddef;
  def map between RV and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
  enddef;
  def map between PLAC and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
    vars Qi and Q_PLAC;
    vars cO2m and cO2m;
    vars B and B;
    vars alpha_c and alpha_c;
    vars Dt and Dt;
    vars Dp and Dp;
    vars L and L;
    vars Lc and Lc;
    vars n_villi and n_villi;
  enddef;
  def map between BR and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
    vars Qi and Q_BR;
    vars QM and QM_BR;
  enddef;
  def map between UB and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
    vars Qi and Q_UB;
    vars QM and QM_UB;
  enddef;
  def map between KID and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
    vars Qi and Q_KID;
    vars QM and QM_KID;
  enddef;
  def map between HE and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
    vars QM and QM_HE;
  enddef;
  def map between INTE and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
    vars Qi and Q_INTE;
    vars QM and QM_INTE;
  enddef;
  def map between LEG and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
    vars Qi and Q_LEG;
    vars QM and QM_LEG;
  enddef;
  def map between LUNG and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
    vars Qi and Q_LUNG;
    vars QM and QM_LUNG;
  enddef;
  def map between CORONARIES and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
    vars Qi and Q_CORONARIES;
    vars QM and QM_CORONARIES;
  enddef;
  def map between Bif_RVin_UP1out_AO2out_CORONARIES3out and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
  enddef;
  def map between Bif_UPin_BR1out_UB2out and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
  enddef;
  def map between Bif_AOin_KIDart1out_HEart2out_INTEart3out_LEGart4out_UA5out and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
  enddef;
  def map between Bif_UVin_DV1out_IntraHe2out and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
  enddef;
  def map between Bif_DVin_DVra1out_DVfo2out and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
  enddef;
  def map between Bif_IVCin_IVCra1out_IVCfo2out and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
  enddef;
  def map between Bif_SVCin_SVCra1out_SVCfo2out and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
  enddef;
  def map between Bif_MPAin_LUNG1out_DA2out and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
  enddef;
  def map between Bif_IVC1in_SVC2in_DV3in_CORONARIES4in_RAout and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
    vars Qi1 and Q_IVCra;
    vars Qi2 and Q_SVCra;
    vars Qi3 and Q_DVra;
  enddef;
  def map between Bif_BR1in_UB2in_SVCout and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
  enddef;
  def map between Bif_KID1in_HE2in_LEG3in_IVCout and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
  enddef;
  def map between Bif_HEart1in_PortalVein2in_IntraHe3in_HEout and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
    vars Qi1 and Q_HeArt;
    vars Qi3 and Q_IntraHe;
  enddef;
  def map between Bif_AO1in_DA2in_dAOout and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
    vars Qi1 and Q_AO;
    vars Qi2 and Q_DA;
  enddef;
  def map between Bif_LUNG1in_FO2in_LAout and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
  enddef;
  def map between Bif_IVC1in_DV2in_SVC3in_FOout and Parameters for
    vars alpha and alpha;
    vars beta and beta;
    vars Hb and Hb;
    vars c1 and c1;
    vars c2 and c2;
    vars Qi1 and Q_IVCfo;
    vars Qi2 and Q_DVfo;
    vars Qi3 and Q_SVCfo;
  enddef;
enddef;
